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System:Additional%20Connections int OperatorBackLink= 1 1 0 1 // Send final state and signal information to Operator (boolean)
Filtering:Windowing:WindowingThread int WindowLength= 1.0s 0.5s % % // Length of window
Filtering:Windowing:WindowingThread int Detrend= 0 0 0 2 // Detrend data? 0: no, 1: mean, 2: linear (enumeration)
Filtering:Windowing:WindowingThread int WindowFunction= 0 0 0 3 // Window function 0: Rectangular, 1: Hamming, 2: Hann, 3: Blackman (enumeration)
Filtering:EMDThread float SiftStopStdDev= 0.3 0.3 0.05 1.0 // Standard deviation used to stop EMD sifting
Filtering:EMDThread int Interpolation= 1 1 0 1 // Interpolation method to use for calculating bounding envelopes (0 = linear, 1 = cubic)
Filtering:EMDThread int MaxIMFs= 1 10 0 64 // Maximum number of Intrinsic Mode Functions (IMFs) to return
Filtering:Spectral%20Estimation:FFTThread float FirstBinCenter= 0Hz 0Hz % % // Center of first frequency bin (in Hz)
Filtering:Spectral%20Estimation:FFTThread float LastBinCenter= 60Hz 30Hz % % // Center of last frequency bin (in Hz)
Filtering:Spectral%20Estimation:FFTThread float BinWidth= 1Hz 3Hz % % // Width of spectral bins (in Hz)
Filtering:Spectral%20Estimation:FFTThread int OutputType= 0 0 0 2 // 0: Spectral Amplitude, 1: Spectral Power, 2: Coefficients (enumeration)
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System:Configuration matrix SignalProcessingFilterChain= 3 { Filter%20Name Position%20String } WindowingFilter 2.A EMDFilter 2.B FFTSpectrum 2.C // SignalProcessing filter chain
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Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeStateName= % // State to be translated into keystrokes (0-F), empty for off
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpression= % // Expression that evaluates to a virtual keycode, empty for off
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpressionOnStartRun= % // Expression that initializes expression variables on StartRun
Connector:ConnectorOutput string ConnectorOutputAddress= localhost:7337 localhost:20321 % % // one or more IP:Port combinations, e.g. localhost:20321
Visualize:Application%20Log:ApplicationBase int ShowAppLog= 0 0 0 1 // Show application log window (boolean)
Application:GazeMonitor:GazeMonitorFilter int VisualizeGazeMonitorFilter= 0 0 0 1 // Visualize the gaze data on the app visualization (boolean)
Application:GazeMonitor:GazeMonitorFilter int EnforceFixation= 0 0 0 1 // Enforce a fixation point on the screen (boolean)
Application:GazeMonitor:GazeMonitorFilter string FixationX= 0.5 0.5 % % // X coordinate of fixation center - 0.0 to 1.0 (expression)
Application:GazeMonitor:GazeMonitorFilter string FixationY= 0.5 0.5 % % // Y coordinate of fixation center - 0.0 to 1.0 (expression)
Application:GazeMonitor:GazeMonitorFilter int ShowFixationZone= 0 0 0 1 // Show the legal fixation zone with a ring (boolean)
Application:GazeMonitor:GazeMonitorFilter float BlinkTime= 100ms 100ms 0 % // Maximum allowed time for invalid eyes
Application:GazeMonitor:GazeMonitorFilter float SaccadeTime= 100ms 100ms 0 % // Maximum allowed time for violating the fixation
Application:GazeMonitor:GazeMonitorFilter float FixationRadius= 0.1 0.1 0.0 1.0 // Allowable distance from fixation center
Application:GazeMonitor:GazeMonitorFilter string FixationImage= % // Image to render at fixation (inputfile)
Application:GazeMonitor:GazeMonitorFilter string FixationViolationImage= % // Image to render at fixation when violated (inputfile)
Application:GazeMonitor:GazeMonitorFilter string FixationViolationSound= % // Sound to play when fixation violated (inputfile)
Application:GazeMonitor:GazeMonitorFilter float FixationImageSize= 0.04 0.04 0.01 1.0 // Size in percentage of screen height of the fixation image
Application:GazeMonitor:GazeMonitorFilter int LogGazeInformation= 0 0 0 1 // Add Eyetracker information to applog (boolean)
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System:Configuration matrix ApplicationFilterChain= 4 { Filter%20Name Position%20String } ConnectorInput 2.9999 KeystrokeFilter 3.1 ConnectorOutput 3.9999 GazeMonitorFilter 3.A // Application filter chain
Storage:Session:DataIOFilter string SubjectSession= 000 001 % % // three-digit session number
Source:Signal%20Properties:DataIOFilter list ChannelNames= 0 // list of channel names
Source:Signal%20Properties:DataIOFilter floatlist SourceChOffset= 1 0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties:DataIOFilter floatlist SourceChGain= 1 0.003 0.003 % % // gain for each channel (A/D units -> muV)
Storage:Data%20Location:DataIOFilter string DataDirectory= ..\data ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectName= Name Name % % // subject alias
Storage:Session:DataIOFilter string SubjectRun= 00 00 % % // two-digit run number
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
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Source:Signal%20Properties:SignalGeneratorADC int SourceCh= 1 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:SignalGeneratorADC int SampleBlockSize= 128 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:SignalGeneratorADC int SamplingRate= 256Hz 256Hz 1 % // sample rate
Source:SignalGeneratorADC int ModulateAmplitude= 1 0 0 1 // Modulate the amplitude with the mouse (0=no, 1=yes) (boolean)
Source:SignalGeneratorADC int SineChannelX= 1 0 0 % // Channel number of sinewave controlled by mouse x position
Source:SignalGeneratorADC int SineChannelY= 0 0 0 % // Channel number of sinewave controlled by mouse y position (0 for all)
Source:SignalGeneratorADC int SineChannelZ= 0 0 0 % // Channel number of sinewave controlled by mouse key state
Source:SignalGeneratorADC float SineFrequency= 17Hz 10Hz % % // Frequency of sine wave
Source:SignalGeneratorADC int SineAmplitude= 10muV 100muV % % // Amplitude of sine wave
Source:SignalGeneratorADC int NoiseAmplitude= 250muV 30muV % % // Amplitude of white noise (common to all channels)
Source:SignalGeneratorADC int DCOffset= 0muV 0muV % % // DC offset (common to all channels)
Source:SignalGeneratorADC string AmplitudeMultiplier= 1 1 % % // Expression to multiply amplitude by
Source:SignalGeneratorADC string OffsetMultiplier= % StimulusType % % // Expression to multiply offset by
Source:SignalGeneratorADC int SignalType= 1 0 0 2 // numeric type of output signal:  0: int16, 1: float32, 2: int32 (enumeration)
Storage:Documentation:BCI2000FileWriter string StorageTime= % // time of beginning of data storage
Source:Alignment:AlignmentFilter int AlignChannels= 1 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 1 1 // list of transmitted channels
System:Additional%20Connections:EventLink int EventLink= 1 1 0 1 // Send events from Operator to Source module (boolean)
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System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 SignalGeneratorADC 1 GDFFileWriter 1 EDFFileWriter 1 BCI2000FileWriter 1 NullFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain
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System:Randomization int RandomSeed= 11465 0 % % // seed for the BCI2000 pseudo random number generator
System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)
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