Visualize:Property%20Sets matrix VisPropertySets= 0 1 // row titles are properties in the form "SRCD.Left", columns are property sets
System:Configuration matrix OperatorVersion= { Framework Revision Build } 1 3.0.5 % Jul%2023%202013%2018:06:14 // operator module version information
System:Additional%20Connections int OperatorBackLink= 1 1 0 1 // Send final state and signal information to Operator (boolean)
Filtering:Windowing:WindowingThread int WindowLength= 1s 0.5s % % // Length of window
Filtering:Windowing:WindowingThread int Detrend= 0 0 0 2 // Detrend data? 0: no, 1: mean, 2: linear (enumeration)
Filtering:Windowing:WindowingThread int WindowFunction= 0 0 0 3 // Window function 0: Rectangular, 1: Hamming, 2: Hann, 3: Blackman (enumeration)
Filtering:EMDThread float SiftStopStdDev= 0.3 0.3 0.05 1.0 // Standard deviation used to stop EMD sifting
Filtering:EMDThread int Interpolation= 1 1 0 1 // Interpolation method to use for calculating bounding envelopes (0 = linear, 1 = cubic)
Filtering:EMDThread int MaxIMFs= 1 10 0 64 // Maximum number of Intrinsic Mode Functions (IMFs) to return
Filtering:Spectral%20Estimation:FFTThread float FirstBinCenter= 0Hz 0Hz % % // Center of first frequency bin (in Hz)
Filtering:Spectral%20Estimation:FFTThread float LastBinCenter= 127Hz 30Hz % % // Center of last frequency bin (in Hz)
Filtering:Spectral%20Estimation:FFTThread float BinWidth= 1Hz 3Hz % % // Width of spectral bins (in Hz)
Filtering:Spectral%20Estimation:FFTThread int OutputType= 0 0 0 2 // 0: Spectral Amplitude, 1: Spectral Power, 2: Coefficients (enumeration)
System:Core%20Connections string OperatorIP= 127.0.0.1 127.0.0.1 % % // the Operator module's IP
System:Core%20Connections string SignalProcessingPort= 31319 4200 1024 65535 // the SignalProcessing module's listening port
System:Core%20Connections string SignalProcessingIP= 128.208.5.218 127.0.0.1 % % // the SignalProcessing module's listening IP
System:Configuration matrix SignalProcessingVersion= { Framework Revision Build } 1 3.0.5 % Jul%2023%202013%2018:06:14 // SignalProcessing version information
System:Configuration matrix SignalProcessingFilterChain= 3 { Filter%20Name Position%20String } WindowingFilter 2.A EMDFilter 2.B FFTSpectrum 2.C // SignalProcessing filter chain
Visualize:Processing%20Stages int VisualizeWindowingFilter= 0 0 0 1 // Visualize WindowingFilter output (boolean)
Visualize:Processing%20Stages int VisualizeEMDFilter= 0 0 0 1 // Visualize EMDFilter output (boolean)
Visualize:Processing%20Stages int VisualizeFFTSpectrum= 1 0 0 1 // Visualize FFTSpectrum output (boolean)
Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeStateName= % // State to be translated into keystrokes (0-F), empty for off
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpression= % // Expression that evaluates to a virtual keycode, empty for off
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpressionOnStartRun= % // Expression that initializes expression variables on StartRun
Connector:ConnectorOutput string ConnectorOutputAddress= 127.0.0.1:7337 localhost:20321 % % // one or more IP:Port combinations, e.g. localhost:20321
Connector:ConnectorOutput string ConnectorOutputFormat= Verbose Verbose % % // Either "Verbose" or "JSON"
Visualize:Application%20Log:ApplicationBase int ShowAppLog= 1 0 0 1 // Show application log window (boolean)
Application:GazeMonitor:GazeMonitorFilter int VisualizeGazeMonitorFilter= 0 0 0 1 // Visualize the gaze data on the app visualization (boolean)
Application:GazeMonitor:GazeMonitorFilter int EnforceFixation= 0 0 0 1 // Enforce a fixation point on the screen (boolean)
Application:GazeMonitor:GazeMonitorFilter string FixationX= 0.5 0.5 % % // X coordinate of fixation center - 0.0 to 1.0 (expression)
Application:GazeMonitor:GazeMonitorFilter string FixationY= 0.5 0.5 % % // Y coordinate of fixation center - 0.0 to 1.0 (expression)
Application:GazeMonitor:GazeMonitorFilter int ShowFixationZone= 0 0 0 1 // Show the legal fixation zone with a ring (boolean)
Application:GazeMonitor:GazeMonitorFilter float BlinkTime= 100ms 100ms 0 % // Maximum allowed time for invalid eyes
Application:GazeMonitor:GazeMonitorFilter float SaccadeTime= 100ms 100ms 0 % // Maximum allowed time for violating the fixation
Application:GazeMonitor:GazeMonitorFilter float FixationRadius= 0.1 0.1 0.0 1.0 // Allowable distance from fixation center
Application:GazeMonitor:GazeMonitorFilter string FixationImage= % // Image to render at fixation (inputfile)
Application:GazeMonitor:GazeMonitorFilter string FixationViolationImage= % // Image to render at fixation when violated (inputfile)
Application:GazeMonitor:GazeMonitorFilter string FixationViolationSound= % // Sound to play when fixation violated (inputfile)
Application:GazeMonitor:GazeMonitorFilter float FixationImageSize= 0.04 0.04 0.01 1.0 // Size in percentage of screen height of the fixation image
Application:GazeMonitor:GazeMonitorFilter int LogGazeInformation= 0 0 0 1 // Add Eyetracker information to applog (boolean)
System:Core%20Connections string ApplicationPort= 31321 4200 1024 65535 // the Application module's listening port
System:Core%20Connections string ApplicationIP= 128.208.5.218 127.0.0.1 % % // the Application module's listening IP
System:Configuration matrix ApplicationVersion= { Framework Revision Build } 1 3.0.5 % Jul%2023%202013%2018:06:14 // Application version information
System:Configuration matrix ApplicationFilterChain= 4 { Filter%20Name Position%20String } ConnectorInput 2.9999 KeystrokeFilter 3.1 ConnectorOutput 3.9999 GazeMonitorFilter 3.A // Application filter chain
Source:Signal%20Properties:DataIOFilter int SourceCh= 1 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:DataIOFilter int SampleBlockSize= 128 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:DataIOFilter int SamplingRate= 256Hz 256Hz 1 % // sample rate
Source:Signal%20Properties:DataIOFilter list ChannelNames= 1 Main // list of channel names
Source:Signal%20Properties:DataIOFilter floatlist SourceChOffset= 1 0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties:DataIOFilter floatlist SourceChGain= 1 0.003 0.003 % % // gain for each channel (A/D units -> muV)
Storage:Data%20Location:DataIOFilter string DataDirectory= ..\data ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectName= BasicTest Name % % // subject alias
Storage:Session:DataIOFilter string SubjectSession= 001 001 % % // three-digit session number
Storage:Session:DataIOFilter string SubjectRun= 00 00 % % // two-digit run number
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
Visualize:Timing:DataIOFilter int VisualizeTiming= 1 1 0 1 // visualize system timing (0=no, 1=yes) (boolean)
Visualize:Source%20Signal:DataIOFilter int VisualizeSource= 1 1 0 1 // visualize raw brain signal (0=no, 1=yes) (boolean)
Visualize:Source%20Signal:DataIOFilter int VisualizeSourceDecimation= auto auto % % // decimation factor for raw brain signal
Visualize:Source%20Signal:DataIOFilter int VisualizeSourceBufferSize= auto auto % % // number of blocks to aggregate before sending to operator
Visualize:Source%20Signal:DataIOFilter int VisualizeSourceTime= 2s 2s 0 % // how much time in Source visualization
Visualize:Source%20Signal:DataIOFilter int SourceMin= -100muV -100muV % % // raw signal vis Min Value
Visualize:Source%20Signal:DataIOFilter int SourceMax= 100muV 100muV % % // raw signal vis Max Value
Source:gUSBampADC intlist SourceChList= 1 1 0 1 128 // list of channels to digitize
Source:gUSBampADC intlist SourceChDevices= 1 1 16 1 17 // number of digitized channels per device
Source:gUSBampADC int NumBuffers= 5 1 2 32 // number of software buffers to use
Source:gUSBampADC string DeviceIDMaster= UA-2007.02.14 // deviceID for the device whose SYNC goes to the slaves
Source:gUSBampADC int FilterEnabled= 1 1 0 1 // Enable pass band filter (0=no, 1=yes)
Source:gUSBampADC float FilterHighPass= 0.1 0.1 0 50 // high pass filter for pass band
Source:gUSBampADC float FilterLowPass= 60 60 0 4000 // low pass filter for pass band
Source:gUSBampADC int FilterModelOrder= 8 8 1 12 // filter model order for pass band
Source:gUSBampADC int FilterType= 1 1 1 2 // filter type for pass band (1=BUTTERWORTH, 2=CHEBYSHEV)
Source:gUSBampADC int NotchEnabled= 1 1 0 1 // Enable notch (0=no, 1=yes)
Source:gUSBampADC float NotchHighPass= 58 58 0 70 // high pass filter for notch filter
Source:gUSBampADC float NotchLowPass= 62 62 0 4000 // low pass filter for notch filter
Source:gUSBampADC int NotchModelOrder= 4 4 1 10 // filter model order for notch filter
Source:gUSBampADC int NotchType= 1 1 1 2 // filter type for pass band (1=CHEBYSHEV, 2=BUTTERWORTH)
Source:gUSBampADC list DeviceIDs= 1 UA-2007.02.14 // list of USBamps to be used (or auto)
Source:gUSBampADC int DigitalInput= 0 0 0 1 // enable digital input:  0: false, 1: true (enumeration)
Source:gUSBampADC int DigitalOutput= 0 0 0 1 // enable digital output on block acquisition (boolean)
Source:gUSBampADC string DigitalOutputEx= % // expression for output on digital output 2 (expression)
Source:gUSBampADC int SignalType= 1 0 0 1 // numeric type of output signal:  0: int16, 1: float32 (enumeration)
Source:gUSBampADC int AcquisitionMode= 0 0 0 2 // data acquisition mode:  0: analog signal acquisition, 1: calibration, 2: impedance (enumeration)
Source:gUSBampADC int CommonGround= 1 0 0 1 // internally connect GNDs from all blocks:  0: false, 1: true (enumeration)
Source:gUSBampADC int CommonReference= 1 0 0 1 // internally connect Refs from all blocks:  0: false, 1: true (enumeration)
Storage:Documentation:BCI2000FileWriter string StorageTime= % // time of beginning of data storage
Source:Alignment:AlignmentFilter int AlignChannels= 0 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 1 1 // list of transmitted channels
System:Additional%20Connections:EventLink int EventLink= 1 1 0 1 // Send events from Operator to Source module (boolean)
System:Core%20Connections string SignalSourcePort= 31323 4200 1024 65535 // the SignalSource module's listening port
System:Core%20Connections string SignalSourceIP= 128.208.5.218 127.0.0.1 % % // the SignalSource module's listening IP
System:Configuration matrix SignalSourceVersion= { Framework Revision Build } 1 3.0.5 % Jul%2023%202013%2018:06:14 // SignalSource version information
System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 gUSBampADC 1 GDFFileWriter 1 EDFFileWriter 1 BCI2000FileWriter 1 NullFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain
Visualize:Processing%20Stages int VisualizeAlignmentFilter= 0 0 0 1 // Visualize AlignmentFilter output (boolean)
Visualize:Processing%20Stages int VisualizeTransmissionFilter= 0 0 0 1 // Visualize TransmissionFilter output (boolean)
System:Randomization int RandomSeed= 4630 0 % % // seed for the BCI2000 pseudo random number generator
System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)
System:State%20Vector int StateVectorLength= 5 16 % % // length of the state vector in bytes
