Filtering int AlignChannels= 0 0 0 1 // align channels in time (0=no, 1=yes)
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Storage int AutoIncrementRunNo= 1 1 0 1 // 0: no auto increment 1: auto increment at Initialize)
Statistics matrix BaselineCfg= 2 2 TargetCode 1 TargetCode 2 0 0 0 // states to watch for baseline
Statistics matrix BaselineHits= 2 2 1 0.50 2 0.50 0 0 0 // proportion correct for each target
UsrTask int BaselineInterval= 1 0 0 2 // Intercept Computation 1 = targets 2 = ITI
Source int BoardNumber= 1 1 1 16 // The NI-ADC board's device number
Filtering int ClassMode= 1 0 1 2 // Classifier mode 1= simple 2= interaction
UsrTask int CursorSize= 25 0 0 1 // User Window Cursor Size
MEMFilter float deltaMem= 0.2 0.2 0.02 2.00 // Resolution (line density)
Statistics float DesiredPixelsPerSec= 50.00 70 0 400 // Desired pixels per second
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Storage string FileInitials= ..\data a z 0 // Initials of file name (max. 8 characters)
Statistics float HorizInterceptProp= 1.0 0.0 0.0 2.0 // Proportion of horizontal signal intercept
Statistics int HorizTrendControl= 1 0 0 2 // Adaption of Horizontal % Correct Trend 1= Lin 2 = Quad
Statistics int InterceptControl= 1 0 0 2 // Online adaption of Intercept 1 = Up/Dn  2 = Up/Dn + Le/Ri
Statistics int InterceptLength= 3 0 0 1000 // Length of time for running average
Statistics float InterceptProportion= 0.9985 0.0 0.0 2.0 // Proportion of signal mean for intercept
UsrTask int ItiDuration= 10 0 0 100 // Duration of Intertrial Interval
Statistics float LinTrendLrnRt= -0.001 0 0.000 0.010 // Learning Rate for Linear Trend Control
Statistics float LRPixelsPerSec= 0 70 0 400 // Horizontal Pixel Rate
Filtering float LR_A= -15 -5.0 -100.0 100.0 // Normal Filter Left/Right Intercept
Filtering float LR_B= 50 5.0 0.0 100.0 // Normal Filter Left/Right Slope
Filtering int MaxChannels= 256 10 1 256 // maximum number of channels in signals B,C
Filtering int MaxElements= 256 10 1 256 // maximum number of elements in signals B,C
MEMFilter float MemBandWidth= 3.0 3.0 0.5 32.0 // Spectral Bandwidth in Hz
MEMFilter int MemDetrend= 0 0 0 2 // Detrend data?  0=no 1=mean 2= linear
MEMFilter int MemModelOrder= 10 10 2 32 // AR model order
MEMFilter int MemWindows= 4 2 1 8 // AR- number of input blocks
Filtering matrix MLR= 1 3 1 1 0 64 0 100 // Class Filter Left / Right Weights
Filtering matrix MUD= 5 3 1 2 1 1 4 1 1 6 1 1 8 1 1 10 1 64 0 100 // Class Filter Additive Up / Down Weights
UsrTask int NumberTargets= 2 0 0 1023 // Number of Targets
Filtering int NumControlSignals= 2 1 1 128 // the number of transmitted control signals
UsrTask int PreRunInterval= 20 0 0 100 // Pause prior to starting a run (in units of SampleBlocks)
UsrTask int PreTrialPause= 10 0 0 100 // Duration of Target w/o cursor
Statistics float QuadTrendLrnRt= 0.001 0 0 0.010 // Learning Rate for Linear Trend Control
UsrTask int RestingPeriod= 0 0 0 1 // 1 defines a rest period of data acquisition
UsrTask int RewardDuration= 10 0 0 100 // Duration of PostTrial Feedback
Source int SampleBlockSize= 16 16 1 2048 // The number of samples in one block
Source float SamplingRate= 256 256 1 20000 // The signal's sampling rate in Hz
Storage int SavePrmFile= 0 1 0 1 // 0/1: don't save/save additional parameter file
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Source int SoftwareCh= 16 16 1 256 // The number of channels
Filtering floatlist SourceChGain= 16 0.0033 0.0033 0.0033 0.0033 0.0033 0.0033 0.0033 0.0033 0.0033 0.0033 0.0033 0.0033 0.0033 0.0033 0.0033 0.0033 0.033 -500 500 // gain for each channel (A/D units -> muV)
Filtering floatlist SourceChOffset= 16 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 -500 500 // offset for channels in A/D units
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Filtering int SpatialFilteredChannels= 4 2 1 64 // Number of Spatially Filtered Channels
Filtering matrix SpatialFilterKernal= 4 4 .3 0 0 0 0 .3 0 0 0 0 .3 0 0 0 0 .3 64 -100 100 // Spatial Filter Kernal Weights
MEMFilter float StartMem= 0.0 0.0 0.0 512.0 // Start of Spectrum in Hz
System int StateVectorLength= 11 16 1 30 // length of the state vector in bytes
MEMFilter float StopMem= 60.0 30.0 0.0 512.0 // End of Spectrum in Hz
Storage string StorageTime= 16:15 Time a z // time of beginning of data storage
Storage string SubjectName= test Name a z // subject alias (max. 8 characters)
Storage string SubjectRun= 01 00 0 99 // digit run number (max. 3 characters)
Storage string SubjectSession= 001 001 0 999 // session number (max. 3 characters)
UsrTask int TargetType= 0 0 0 1 // 0=Targets, 1=YES/NO
UsrTask float TargetWidth= 25 0 0 32767 // Width of Targets
UsrTask int TimeLimit= 180 180 0 1000 // Time Limit for Runs in seconds
Source int TransmitCh= 4 4 1 128 // the number of transmitted channels
Source intlist TransmitChList= 4 1 2 3 4 1 1 128 // list of transmitted channels (# of channels MUST equal TransmitCh)
Statistics int TrendControl= 1 0 0 2 // Online adaption of % Correct Trend 1= Lin 2 = Quad
Statistics int TrendWinLth= 20 0 0 100 // Length of % Correct Window
Filtering float UD_A= -4.99 5.0 -100.0 100.0 // Normal Filter Up / Down Intercept
Filtering float UD_B= 5000.00 5.0 -100.0 100.0 // Normal Filter Up / Down Slope
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Statistics matrix WeightControl= 1 1 0 0 0 0 // State Names controlling Classifier Adaptation
Statistics int WeightUse= 0 0 0 2 // Use of weights 0 = not 1= compute 2= use 
UsrTask int WinHeight= 512 0 0 1 // User Window Height
UsrTask int WinWidth= 512 0 0 1 // User Window Width
UsrTask int WinXpos= 400 0 0 1 // User Window X location
UsrTask int WinYpos= 5 0 0 1 // User Window Y location
Statistics float WtLrnRt= 0.001 0 0.000 0.010 // Rate of Learning for Classifier 
UsrTask int YesNoCorrect= 0 0 0 1 // Yes or No is target word (0=Yes, 1=No)
UsrTask int YesNoOffTime= 4 0 0 10 // Time Yes/No is invisible (in units of SampleBlocks)
UsrTask int YesNoOnTime= 1 0 0 10 // Time Yes/No is visible (in units of SampleBlocks)
