Visualize:Property%20Sets matrix VisPropertySets= 0 1 // row titles are properties in the form "SRCD.Left", columns are property sets
System:Configuration matrix OperatorVersion= { Framework Revision Build } 1 3.0.5 % May%2015%202013%2014:46:50 // operator module version information
System:Additional%20Connections int OperatorBackLink= 1 1 0 1 // Send final state and signal information to Operator (boolean)
Filtering:SpatialFilter int SpatialFilterType= 1 2 0 3 // spatial filter type 0: none, 1: full matrix, 2: sparse matrix, 3: common average reference (CAR) (enumeration)
Filtering:SpatialFilter:SpatialFilter matrix SpatialFilter= 4 4 1 0 0 0 0 1 0 0 0 0 1 0 0 0 0 1 0 % % // columns represent input channels, rows represent output channels
Filtering:SpatialFilter:SpatialFilter intlist SpatialFilterCAROutput= 0 // when using CAR filter type: list of output channels, or empty for all channels
Filtering:SpatialFilter:SpatialFilter int SpatialFilterMissingChannels= 1 0 0 1 // how to handle missing channels 0: ignore, 1: report error (enumeration)
Filtering:Spectral%20Estimation:ARThread float FirstBinCenter= 0Hz 0Hz % % // Center of first frequency bin (in Hz)
Filtering:Spectral%20Estimation:ARThread float LastBinCenter= 60Hz 30Hz % % // Center of last frequency bin (in Hz)
Filtering:Spectral%20Estimation:ARThread float BinWidth= 1Hz 3Hz % % // Width of spectral bins (in Hz)
Filtering:Spectral%20Estimation:ARThread int OutputType= 0 0 0 2 // 0: Spectral Amplitude, 1: Spectral Power, 2: Coefficients (enumeration)
Filtering:AR%20Spectral%20Estimator:ARThread int ModelOrder= 16 16 0 % // AR model order
Filtering:AR%20Spectral%20Estimator:ARThread int EvaluationsPerBin= 15 15 1 % // Number of uniformly spaced evaluation points entering into a single bin value
Filtering:Windowing:WindowingThread int WindowLength= 0.5s 0.5s % % // Length of window
Filtering:Windowing:WindowingThread int Detrend= 0 0 0 2 // Detrend data? 0: no, 1: mean, 2: linear (enumeration)
Filtering:Windowing:WindowingThread int WindowFunction= 0 0 0 3 // Window function 0: Rectangular, 1: Hamming, 2: Hann, 3: Blackman (enumeration)
Filtering:LinearClassifier matrix Classifier= 2 { input%20channel input%20element%20(bin) output%20channel weight } 1 4 1 1 1 6 2 1 // Linear classification matrix in sparse representation
Filtering:LPFilter float LPTimeConstant= 0 16s 0 % // time constant for the low pass filter
Filtering:ExpressionFilter string StartRunExpression= % // expression executed on StartRun
Filtering:ExpressionFilter string StopRunExpression= % // expression executed on StopRun
Filtering:ExpressionFilter matrix Expressions= 0 1 // expressions used to compute the output of the ExpressionFilter (rows are channels; empty matrix for none)
Filtering:Normalizer floatlist NormalizerOffsets= 2 0 0 0 % % // normalizer offsets
Filtering:Normalizer floatlist NormalizerGains= 2 1 1 0 % % // normalizer gain values
Filtering:Normalizer intlist Adaptation= 2 0 0 0 0 2 // 0: no adaptation, 1: zero mean, 2: zero mean, unit variance (enumeration)
Filtering:Normalizer matrix BufferConditions= 2 1 (Feedback)&&(TargetCode==1) (Feedback)&&(TargetCode==2) // expressions corresponding to data buffers (columns correspond to output channels, multiple rows correspond to multiple buffers)
Filtering:Normalizer float BufferLength= 9s 9s % % // time window of past data per buffer that enters into statistic
Filtering:Normalizer string UpdateTrigger= (Feedback==0) // expression to trigger offset/gain update when changing from 0 (use empty string for continuous update)
System:Core%20Connections string OperatorIP= 127.0.0.1 127.0.0.1 % % // the Operator module's IP
System:Core%20Connections string SignalProcessingPort= 59653 4200 1024 65535 // the SignalProcessing module's listening port
System:Core%20Connections string SignalProcessingIP= 128.208.5.218 127.0.0.1 % % // the SignalProcessing module's listening IP
System:Configuration matrix SignalProcessingVersion= { Framework Revision Build } 1 3.0.5 % May%2015%202013%2014:46:50 // SignalProcessing version information
System:Configuration matrix SignalProcessingFilterChain= 6 { Filter%20Name Position%20String } SpatialFilter 2.B ARFilter 2.C LinearClassifier 2.D LPFilter 2.D1 ExpressionFilter 2.D2 Normalizer 2.E // SignalProcessing filter chain
Visualize:Processing%20Stages int VisualizeSpatialFilter= 0 0 0 1 // Visualize SpatialFilter output (boolean)
Visualize:Processing%20Stages int VisualizeARFilter= 0 0 0 1 // Visualize ARFilter output (boolean)
Visualize:Processing%20Stages int VisualizeLinearClassifier= 0 0 0 1 // Visualize LinearClassifier output (boolean)
Visualize:Processing%20Stages int VisualizeExpressionFilter= 0 0 0 1 // Visualize ExpressionFilter output (boolean)
Visualize:Processing%20Stages int VisualizeLPFilter= 0 0 0 1 // Visualize LPFilter output (boolean)
Visualize:Processing%20Stages int VisualizeNormalizer= 0 0 0 1 // Visualize Normalizer output (boolean)
Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Application%20Window:ApplicationWindow int WindowWidth= 1680 640 0 % // width of Application window
Application:Application%20Window:ApplicationWindow int WindowHeight= 1050 480 0 % // height of Application window
Application:Application%20Window:ApplicationWindow int WindowLeft= 1920 0 % % // screen coordinate of Application window's left edge
Application:Application%20Window:ApplicationWindow int WindowTop= 0 0 % % // screen coordinate of Application window's top edge
Application:Application%20Window:ApplicationWindow string WindowBackgroundColor= 0x000000 0x505050 % % // Application window background color (color)
Visualize:Application%20Window:ApplicationWindow int VisualizeApplicationWindow= 1 0 0 1 // Display miniature copy of Application window (boolean)
Visualize:Application%20Window:ApplicationWindow int AppWindowSpatialDecimation= 8 8 1 % // Application window decimation (shrinking) factor
Visualize:Application%20Window:ApplicationWindow int AppWindowTemporalDecimation= 4 16 1 % // Application window time decimation factor
Visualize:Application%20Log:ApplicationBase int ShowAppLog= 1 0 0 1 // Show application log window (boolean)
Application:Sequencing:StimulusTask float PreRunDuration= 2s 1 0 % // pause preceding first sequence
Application:Sequencing:StimulusTask float PostRunDuration= 2s 0 0 % // pause following last sequence
Application:Sequencing:StimulusTask float PreSequenceDuration= 2s 2s 0 % // pause preceding sequences/sets of intensifications
Application:Sequencing:StimulusTask float PostSequenceDuration= 2s 2s 0 % // pause following sequences/sets of intensifications
Application:Sequencing:StimulusTask float StimulusDuration= 4s 40ms 0 % // stimulus duration
Application:Sequencing:StimulusTask string EarlyOffsetExpression= % // abort stimulus if this expression becomes true
Application:Sequencing:StimulusTask float ISIMinDuration= 1.5s 80ms 0 % // minimum duration of inter-stimulus interval
Application:Sequencing:StimulusTask float ISIMaxDuration= 2s 80ms 0 % // maximum duration of inter-stimulus interval
Application:Result%20Processing:StimulusTask int InterpretMode= 0 0 0 2 // interpretation of results: 0 none, 1 online free mode, 2 copy mode (enumeration)
Application:Result%20Processing:StimulusTask int DisplayResults= 1 1 0 1 // display results of copy/free spelling (boolean)
Application:Result%20Processing:StimulusTask int AccumulateEvidence= 0 0 0 1 // accumulate evidence until a selection is made (boolean)
Application:Result%20Processing:StimulusTask float MinimumEvidence= 0 0 0 % // do not make a selection unless target evidence exceeds this value. For a normalized classifier, MinimumEvidence approximates -2.3*log10(Error Probability)
Application:Sequencing:StimulusPresentationTask intlist Sequence= 7 5 5 0 5 0 0 5 // Sequence in which stimuli are presented (deterministic mode)/ Stimulus frequencies for each stimulus (random mode)/ Ignored (P3Speller compatible mode)
Application:Sequencing:StimulusPresentationTask int SequenceType= 1 0 0 2 // Sequence of stimuli is 0 deterministic, 1 random, 2 P3Speller compatible (enumeration)
Application:Sequencing:StimulusPresentationTask int NumberOfSequences= 1 1 0 % // number of sequence repetitions
Application:Sequencing:StimulusPresentationTask intlist ToBeCopied= 0 1 1 % // Sequence in which stimuli need to be copied (only used in copy mode)
Application:Sequencing:StimulusPresentationTask string UserComment= % // User comments for a specific run
Application:Stimuli:StimulusPresentationTask matrix Stimuli= { caption icon } { stimulus1 stimulus2 stimulus3 stimulus4 5 6 7 } One Two Three Four Five Six Seven images/fixationDiamond.bmp images/hand_RightWhole_combined.bmp images/foot_rightCombined.bmp images/simul_rHand_motor.bmp images/simul_rFoot_motor.bmp images/simul_rHand_rFoot.bmp images/spaceBar.bmp // captions and icons to be displayed, sounds to be played for different stimuli
Application:Stimuli:StimulusPresentationTask matrix FocusOn= { caption icon audio } { focuson } Please%20focus%20on images\focuson.bmp sounds\uh-uh.wav // initial announcement what to focus on
Application:Stimuli:StimulusPresentationTask matrix Result= { caption icon audio } { result } The%20result%20was images\result.bmp sounds\uh-uh.wav // final result announcement 
Application:Stimuli:StimulusPresentationTask int StimulusWidth= 30 0 0 100 // StimulusWidth in percent of screen width (zero for original pixel size)
Application:Stimuli:StimulusPresentationTask int CaptionHeight= 10 0 0 100 // Height of stimulus caption text in percent of screen height
Application:Stimuli:StimulusPresentationTask string CaptionColor= 0x00FFFFFF 0x00FFFFFF 0x00000000 0xFFFFFFFF // Color of stimulus caption text (color)
Application:Stimuli:StimulusPresentationTask string BackgroundColor= 0x00FFFF00 0x00FFFF00 0x00000000 0xFFFFFFFF // Color of stimulus background (color)
Application:Stimuli:StimulusPresentationTask int CaptionSwitch= 0 1 0 1 // Present captions (boolean)
Application:Stimuli:StimulusPresentationTask int IconSwitch= 1 1 0 1 // Present icon files (boolean)
Application:Stimuli:StimulusPresentationTask int AudioSwitch= 0 1 0 1 // Present audio files (boolean)
Application:Stimuli:StimulusPresentationTask float AudioVolume= 100 100 0 100 // Volume for audio playback in percent
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeStateName= % // State to be translated into keystrokes (0-F), empty for off
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpression= % // Expression that evaluates to a virtual keycode, empty for off
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpressionOnStartRun= % // Expression that initializes expression variables on StartRun
Connector:ConnectorOutput string ConnectorOutputAddress= 128.208.5.218:7337 localhost:20321 % % // one or more IP:Port combinations, e.g. localhost:20321
Application:GazeMonitor:GazeMonitorFilter int VisualizeGazeMonitorFilter= 0 0 0 1 // Visualize the gaze data on the app visualization (boolean)
Application:GazeMonitor:GazeMonitorFilter int EnforceFixation= 0 0 0 1 // Enforce a fixation point on the screen (boolean)
Application:GazeMonitor:GazeMonitorFilter string FixationX= 0.5 0.5 % % // X coordinate of fixation center - 0.0 to 1.0 (expression)
Application:GazeMonitor:GazeMonitorFilter string FixationY= 0.5 0.5 % % // Y coordinate of fixation center - 0.0 to 1.0 (expression)
Application:GazeMonitor:GazeMonitorFilter int ShowFixationZone= 0 0 0 1 // Show the legal fixation zone with a ring (boolean)
Application:GazeMonitor:GazeMonitorFilter float BlinkTime= 100ms 100ms 0 % // Maximum allowed time for invalid eyes
Application:GazeMonitor:GazeMonitorFilter float SaccadeTime= 100ms 100ms 0 % // Maximum allowed time for violating the fixation
Application:GazeMonitor:GazeMonitorFilter float FixationRadius= 0.1 0.1 0.0 1.0 // Allowable distance from fixation center
Application:GazeMonitor:GazeMonitorFilter string FixationImage= % // Image to render at fixation (inputfile)
Application:GazeMonitor:GazeMonitorFilter string FixationViolationImage= % // Image to render at fixation when violated (inputfile)
Application:GazeMonitor:GazeMonitorFilter string FixationViolationSound= % // Sound to play when fixation violated (inputfile)
Application:GazeMonitor:GazeMonitorFilter float FixationImageSize= 0.04 0.04 0.01 1.0 // Size in percentage of screen height of the fixation image
Application:GazeMonitor:GazeMonitorFilter int LogGazeInformation= 0 0 0 1 // Add Eyetracker information to applog (boolean)
Application:Localization:Localization string Language= Default Default % % // Language for user messages
Application:Localization:Localization matrix LocalizedStrings= { German } { TIME%20OUT%20!!! Waiting%20to%20start%20... } Zeit%20abgelaufen! Warte%20... // Localized user messages
System:Core%20Connections string ApplicationPort= 59655 4200 1024 65535 // the Application module's listening port
System:Core%20Connections string ApplicationIP= 128.208.5.218 127.0.0.1 % % // the Application module's listening IP
System:Configuration matrix ApplicationVersion= { Framework Revision Build } 1 3.0.5 % May%2015%202013%2014:46:50 // Application version information
System:Configuration matrix ApplicationFilterChain= 5 { Filter%20Name Position%20String } ConnectorInput 2.9999 StimulusPresentationTask 3 KeystrokeFilter 3.1 ConnectorOutput 3.9999 GazeMonitorFilter 3.A // Application filter chain
Source:Signal%20Properties:DataIOFilter int SourceCh= 64 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:DataIOFilter int SampleBlockSize= 16 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:DataIOFilter int SamplingRate= 512Hz 256Hz 1 % // sample rate
Source:Signal%20Properties:DataIOFilter list ChannelNames= 1 Main // list of channel names
Source:Signal%20Properties:DataIOFilter floatlist SourceChOffset= 64 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties:DataIOFilter floatlist SourceChGain= 64 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 % % // gain for each channel (A/D units -> muV)
Storage:Data%20Location:DataIOFilter string DataDirectory= ..\data ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectName= Lucas Name % % // subject alias
Storage:Session:DataIOFilter string SubjectSession= 001 001 % % // three-digit session number
Storage:Session:DataIOFilter string SubjectRun= 00 00 % % // two-digit run number
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
Visualize:Timing:DataIOFilter int VisualizeTiming= 1 1 0 1 // visualize system timing (0=no, 1=yes) (boolean)
Visualize:Source%20Signal:DataIOFilter int VisualizeSource= 1 1 0 1 // visualize raw brain signal (0=no, 1=yes) (boolean)
Visualize:Source%20Signal:DataIOFilter int VisualizeSourceDecimation= auto auto % % // decimation factor for raw brain signal
Visualize:Source%20Signal:DataIOFilter int VisualizeSourceBufferSize= auto auto % % // number of blocks to aggregate before sending to operator
Visualize:Source%20Signal:DataIOFilter int VisualizeSourceTime= 2s 2s 0 % // how much time in Source visualization
Visualize:Source%20Signal:DataIOFilter int SourceMin= -100muV -100muV % % // raw signal vis Min Value
Visualize:Source%20Signal:DataIOFilter int SourceMax= 100muV 100muV % % // raw signal vis Max Value
Source:gUSBampADC intlist SourceChList= 0 0 1 128 // list of channels to digitize
Source:gUSBampADC intlist SourceChDevices= 4 16 16 16 16 16 1 17 // number of digitized channels per device
Source:gUSBampADC int NumBuffers= 5 1 2 32 // number of software buffers to use
Source:gUSBampADC string DeviceIDMaster= UA-2008.12.19 // deviceID for the device whose SYNC goes to the slaves
Source:gUSBampADC int FilterEnabled= 1 1 0 1 // Enable pass band filter (0=no, 1=yes)
Source:gUSBampADC float FilterHighPass= 0.1 0.1 0 50 // high pass filter for pass band
Source:gUSBampADC float FilterLowPass= 60 60 0 4000 // low pass filter for pass band
Source:gUSBampADC int FilterModelOrder= 8 8 1 12 // filter model order for pass band
Source:gUSBampADC int FilterType= 1 1 1 2 // filter type for pass band (1=BUTTERWORTH, 2=CHEBYSHEV)
Source:gUSBampADC int NotchEnabled= 1 1 0 1 // Enable notch (0=no, 1=yes)
Source:gUSBampADC float NotchHighPass= 58 58 0 70 // high pass filter for notch filter
Source:gUSBampADC float NotchLowPass= 62 62 0 4000 // low pass filter for notch filter
Source:gUSBampADC int NotchModelOrder= 4 4 1 10 // filter model order for notch filter
Source:gUSBampADC int NotchType= 1 1 1 2 // filter type for pass band (1=CHEBYSHEV, 2=BUTTERWORTH)
Source:gUSBampADC list DeviceIDs= 4 UA-2008.12.19 UA-2008.12.04 UA-2007.02.15 UA-2007.02.14 // list of USBamps to be used (or auto)
Source:gUSBampADC int DigitalInput= 0 0 0 1 // enable digital input:  0: false, 1: true (enumeration)
Source:gUSBampADC int DigitalOutput= 0 0 0 1 // enable digital output on block acquisition (boolean)
Source:gUSBampADC string DigitalOutputEx= % // expression for output on digital output 2 (expression)
Source:gUSBampADC int SignalType= 1 0 0 1 // numeric type of output signal:  0: int16, 1: float32 (enumeration)
Source:gUSBampADC int AcquisitionMode= 0 0 0 2 // data acquisition mode:  0: analog signal acquisition, 1: calibration, 2: impedance (enumeration)
Source:gUSBampADC int CommonGround= 1 0 0 1 // internally connect GNDs from all blocks:  0: false, 1: true (enumeration)
Source:gUSBampADC int CommonReference= 1 0 0 1 // internally connect Refs from all blocks:  0: false, 1: true (enumeration)
Storage:Documentation:BCI2000FileWriter string StorageTime= % // time of beginning of data storage
Source:Alignment:AlignmentFilter int AlignChannels= 0 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 4 1 2 3 4 // list of transmitted channels
System:Additional%20Connections:EventLink int EventLink= 1 1 0 1 // Send events from Operator to Source module (boolean)
HumanInterfaceDevices:Cyberglove:CyberGloveLogger int LogCyberGlove= 1 0 0 1 // record CyberGlove to states (boolean)
HumanInterfaceDevices:Cyberglove:CyberGloveLogger list CyberGloveHandedness= 1 L // CyberGlove handedness: L or R for each glove
System:Core%20Connections string SignalSourcePort= 59657 4200 1024 65535 // the SignalSource module's listening port
System:Core%20Connections string SignalSourceIP= 128.208.5.218 127.0.0.1 % % // the SignalSource module's listening IP
System:Configuration matrix SignalSourceVersion= { Framework Revision Build } 1 3.0.5 % May%2015%202013%2014:46:50 // SignalSource version information
System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 gUSBampADC 1 GDFFileWriter 1 EDFFileWriter 1 BCI2000FileWriter 1 NullFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain
Visualize:Processing%20Stages int VisualizeAlignmentFilter= 0 0 0 1 // Visualize AlignmentFilter output (boolean)
Visualize:Processing%20Stages int VisualizeTransmissionFilter= 0 0 0 1 // Visualize TransmissionFilter output (boolean)
System:Randomization int RandomSeed= 13153 0 % % // seed for the BCI2000 pseudo random number generator
System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)
System:State%20Vector int StateVectorLength= 54 16 % % // length of the state vector in bytes
