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Source:Signal%20Properties:DataIOFilter list ChannelNames= 0 // list of channel names
Storage:Data%20Location:DataIOFilter string DataDirectory= C:\NeuralSystemsBCI2000\data ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectName= Name Name % % // subject alias
Storage:Session:DataIOFilter string SubjectSession= 001 001 % % // three-digit session number
Storage:Session:DataIOFilter string SubjectRun= 00 00 % % // two-digit run number
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
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Source:Signal%20Properties:SignalGeneratorADC int SourceCh= 2 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:SignalGeneratorADC int SampleBlockSize= 32 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:SignalGeneratorADC int SamplingRate= 256Hz 256Hz 1 % // sample rate
Source:SignalGeneratorADC list SourceChOffset= 2 0 0 
Source:SignalGeneratorADC list SourceChGain= 2 0.003 0.003 
Source:SignalGeneratorADC int ModulateAmplitude= 1 0 0 1 // Modulate the amplitude with the mouse (0=no, 1=yes) (boolean)
Source:SignalGeneratorADC int SineChannelX= 0 0 0 % // Channel number of sinewave controlled by mouse x position
Source:SignalGeneratorADC int SineChannelY= 1 0 0 % // Channel number of sinewave controlled by mouse y position (0 for all)
Source:SignalGeneratorADC int SineChannelZ= 0 0 0 % // Channel number of sinewave controlled by mouse key state
Source:SignalGeneratorADC float SineFrequency= 10Hz 10Hz % % // Frequency of sine wave
Source:SignalGeneratorADC int SineAmplitude= 100muV 100muV % % // Amplitude of sine wave
Source:SignalGeneratorADC int NoiseAmplitude= 30muV 30muV % % // Amplitude of white noise (common to all channels)
Source:SignalGeneratorADC int DCOffset= 0muV 0muV % % // DC offset (common to all channels)
Source:SignalGeneratorADC string AmplitudeMultiplier= 1 1 % % // Expression to multiply amplitude by
Source:SignalGeneratorADC string OffsetMultiplier= % StimulusType % % // Expression to multiply offset by
Source:SignalGeneratorADC int SignalType= 0 0 0 2 // numeric type of output signal:  0: int16, 1: float32, 2: int32 (enumeration)
Source:SignalGeneratorADC matrix SourceProperties= 0 { Frequency Amplitude } // Source properties
Source:SignalGeneratorADC matrix MixingMatrix= 0 1 // Source-to-sensor projection, rows are sources, columns are sensors
Storage:BCI2000FileWriter string FileFormat= dat // format of data file (readonly)
Storage:Documentation:BCI2000FileWriter string StorageTime= % // time of beginning of data storage
Source:Alignment:AlignmentFilter int AlignChannels= 1 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 1 * // list of transmitted channels: Channel names may contain * and ? wildcards,  and character ranges enclosed in []; wildcard patterns may be negated by prepending an exclamation mark.  Ranges of channels may be specified using : or - to separate begin from end.
System:Additional%20Connections:EventLink int EventLink= 1 1 0 1 // Send events from Operator to Source module (boolean)(readonly)
Storage:Data%20Location:RunManager string DataFile= $%7bSubjectName%7d$%7bSubjectSession%7d/$%7bSubjectName%7dS$%7bSubjectSession%7dR$%7bSubjectRun%7d.$%7bFileFormat%7d // name of data file relative to DataDirectory
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System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 SignalGeneratorADC 1 GDFFileWriter 1 EDFFileWriter 1 BCI2000FileWriter 1 NullFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain(readonly)
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Filtering:Windowing:WindowingThread int WindowLength= 0.5s 0.5s % % // Length of window
Filtering:Windowing:WindowingThread int Detrend= 0 0 0 2 // Detrend data? 0: no, 1: mean, 2: linear (enumeration)
Filtering:Windowing:WindowingThread int WindowFunction= 0 0 0 3 // Window function 0: Rectangular, 1: Hamming, 2: Hann, 3: Blackman (enumeration)
Filtering:Spectral%20Estimation:ARThread float FirstBinCenter= 0Hz 0Hz % % // Center of first frequency bin (in Hz)
Filtering:Spectral%20Estimation:ARThread float LastBinCenter= 30Hz 30Hz % % // Center of last frequency bin (in Hz)
Filtering:Spectral%20Estimation:ARThread float BinWidth= 3Hz 3Hz % % // Width of spectral bins (in Hz)
Filtering:Spectral%20Estimation:ARThread int OutputType= 0 0 0 2 // 0: Spectral Amplitude, 1: Spectral Power, 2: Coefficients (enumeration)
Filtering:AR%20Spectral%20Estimator:ARThread int ModelOrder= 16 16 0 % // AR model order
Filtering:AR%20Spectral%20Estimator:ARThread int EvaluationsPerBin= 15 15 1 % // Number of uniformly spaced evaluation points entering into a single bin value
Filtering:SpatialFilter int SpatialFilterType= 1 2 0 3 // spatial filter type 0: none, 1: full matrix, 2: sparse matrix, 3: common average reference (CAR) (enumeration)
Filtering:SpatialFilter:SpatialFilter matrix SpatialFilter= 1 2 0.11 0.25 0 % % // columns represent input channels, rows represent output channels
Filtering:SpatialFilter:SpatialFilter intlist SpatialFilterCAROutput= 1 5 // when using CAR filter type: list of output channels, or empty for all channels
Filtering:SpatialFilter:SpatialFilter int SpatialFilterMissingChannels= 1 0 0 1 // how to handle missing channels 0: ignore, 1: report error (enumeration)
Filtering:LinearClassifier matrix Classifier= 2 { input%20channel input%20element%20(bin) output%20channel weight } 1 4 1 1 1 6 2 1 // Linear classification matrix in sparse representation
Filtering:LPFilter float LPTimeConstant= 0 16s 0 % // time constant for the low pass filter
Filtering:ExpressionFilter string StartRunExpression= % // expression executed on StartRun
Filtering:ExpressionFilter string StopRunExpression= % // expression executed on StopRun
Filtering:ExpressionFilter matrix Expressions= 0 1 // expressions used to compute the output of the ExpressionFilter (rows are channels; empty matrix for none)
Filtering:Normalizer floatlist NormalizerOffsets= 2 56.0761 0 0 % % // normalizer offsets
Filtering:Normalizer floatlist NormalizerGains= 2 0.0658554 1 0 % % // normalizer gain values
Filtering:Normalizer intlist Adaptation= 2 2 2 0 0 2 // 0: no adaptation, 1: zero mean, 2: zero mean, unit variance (enumeration)
Filtering:Normalizer matrix BufferConditions= 2 1 (Feedback)&&(TargetCode==1) (Feedback)&&(TargetCode==2) // expressions corresponding to data buffers (columns correspond to output channels, multiple rows correspond to multiple buffers)
Filtering:Normalizer float BufferLength= 9s 9s % % // time window of past data per buffer that enters into statistic
Filtering:Normalizer string UpdateTrigger= (Feedback==0) // expression to trigger offset/gain update when changing from 0 (use empty string for continuous update)
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System:Configuration matrix SignalProcessingFilterChain= 6 { Filter%20Name Position%20String } SpatialFilter 2.B ARFilter 2.C LinearClassifier 2.D LPFilter 2.D1 ExpressionFilter 2.D2 Normalizer 2.E // SignalProcessing filter chain(readonly)
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Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Application%20Window:ApplicationWindow int WindowWidth= 512 640 0 % // width of Application window
Application:Application%20Window:ApplicationWindow int WindowHeight= 1050 480 0 % // height of Application window
Application:Application%20Window:ApplicationWindow int WindowLeft= 1920 0 % % // screen coordinate of Application window's left edge
Application:Application%20Window:ApplicationWindow int WindowTop= 30 0 % % // screen coordinate of Application window's top edge
Application:Application%20Window:ApplicationWindow string WindowBackgroundColor= 0x000000 0x505050 % % // Application window background color (color)
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Visualize:Application%20Log:ApplicationBase int ShowAppLog= 1 0 0 1 // Show application log window (boolean)
Application:Sequencing:FeedbackTask float PreRunDuration= 0s 2s 0 % // duration of pause preceding first trial
Application:Sequencing:FeedbackTask float PreFeedbackDuration= 0s 2s 0 % // duration of target display prior to feedback
Application:Sequencing:FeedbackTask float FeedbackDuration= 6s 3s 0 % // duration of feedback
Application:Sequencing:FeedbackTask float PostFeedbackDuration= 1s 1s 0 % // duration of result display after feedback
Application:Sequencing:FeedbackTask float ITIDuration= 0s 1s 0 % // duration of inter-trial interval
Application:Sequencing:FeedbackTask float MinRunLength= % 120s 0 % // minimum duration of a run; if blank, NumberOfTrials is used
Application:Sequencing:FeedbackTask int NumberOfTrials= 20 0 0 % // number of trials; if blank, MinRunLength is used
Application:Targets:FeedbackTask int NumberTargets= 1 2 0 255 // number of targets
Application:Targets:FeedbackTask intlist TargetSequence= 0 1 % % // fixed sequence in which targets should be presented (leave empty for random)
Application:Targets:DynamicFeedbackTask matrix Targets= 8 { pos%20x pos%20y pos%20z width%20x width%20y width%20z } 50 80 50 6 6 6 71.21 71.21 50 6 6 6 80 50 50 6 6 6 71.21 28.79 50 6 6 6 50 20 50 6 6 6 28.79 28.79 50 6 6 6 20 50 50 6 6 6 28.79 71.21 50 6 6 6 // Number of targets and their position (center) and dimensions in percentage coordinates
Application:Targets:DynamicFeedbackTask int TargetColor= 0x0000FF // target color (color)
Application:Cursor:DynamicFeedbackTask float CursorWidth= 5 10 0.0 % // feedback cursor width in percent of screen width
Application:Cursor:DynamicFeedbackTask int CursorColor= 0xff0000 // Cursor color (color)
Application:Cursor:DynamicFeedbackTask floatlist CursorPos= 3 50 50 50 // cursor starting position
Application:Sequencing:DynamicFeedbackTask float MaxFeedbackDuration= 6s % 0 % // abort a trial after this amount of feedback time has expired
Application:3DEnvironment:DynamicFeedbackTask int WorkspaceBoundaryColor= 0xffffff 0 % % // workspace boundary color (0xff000000 for invisible) (color)
Application:Feedback:DynamicFeedbackTask int VisualFeedback= 1 1 0 1 // provide visual stimulus (boolean)
Application:Feedback:DynamicFeedbackTask intlist VisualCatchTrials= 0 // list of visual catch trials, leave empty for none
Application:Connector:DynamicFeedbackTask string ListeningPort= 20000 20320 % % // Port for the server to listen on
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeStateName= % // State to be translated into keystrokes (0-F), empty for off
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpression= % // Expression that evaluates to a virtual keycode, empty for off
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpressionOnStartRun= % // Expression that initializes expression variables on StartRun
Connector:ConnectorOutput string ConnectorOutputAddress= % localhost:20321 % % // one or more IP:Port combinations, e.g. localhost:20321
Connector:ConnectorOutput string ConnectorOutputFormat= Verbose Verbose % % // Either "Verbose" or "JSON"
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System:Configuration matrix ApplicationFilterChain= 4 { Filter%20Name Position%20String } ConnectorInput 2.9999 DynamicFeedbackTask 3 KeystrokeFilter 3.1 ConnectorOutput 3.9999 // Application filter chain(readonly)
System:Randomization int RandomSeed= 30412 0 % % // seed for the BCI2000 pseudo random number generator(readonly)
System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)(readonly)
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