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System int StateVectorLength= 9 16 1 30 // length of the state vector in bytes
Source:Signal%20Properties int SourceCh= 16 16 1 % // number of digitized and stored channels
Source:Signal%20Properties int SampleBlockSize= 8 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties int SamplingRate= 256 256Hz 1 % // sample rate
Source:Signal%20Properties list ChannelNames= 0 // list of channel names
Source:Signal%20Properties floatlist SourceChOffset= 16 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties floatlist SourceChGain= 16 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.003 % % // gain for each channel (A/D units -> muV)
Storage:Data%20Location string DataDirectory= ..\data ..\data % % // path to top level data directory (directory)
Storage:Session string SubjectName= test Name % % // subject alias
Storage:Session string SubjectSession= 001 001 % % // three-digit session number
Storage:Session string SubjectRun= 01 00 % % // two-digit run number
Storage:Documentation string ID_System= % // BCI2000 System Code
Storage:Documentation string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation string ID_Montage= % // BCI2000 Cap Montage Code
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Source:RandomNumberADC int ModulateAmplitude= 1 0 0 1 // Modulate the amplitude with the mouse (0=no, 1=yes) (boolean)
Source:RandomNumberADC int SineChannelX= 0 0 0 % // Channel number of sinewave controlled by mouse x position
Source:RandomNumberADC int SineChannelY= 0 0 0 % // Channel number of sinewave controlled by mouse y position (0 for all)
Source:RandomNumberADC float SineFrequency= 10 10Hz % % // Frequency of sine wave
Source:RandomNumberADC int SineAmplitude= 100muV 100muV % % // Amplitude of sine wave
Source:RandomNumberADC int NoiseAmplitude= 30muV 30muV % % // Amplitude of white noise (common to all channels)
Source:RandomNumberADC int DCOffset= 60muV 0muV % % // DC offset (common to all channels)
Source:RandomNumberADC string OffsetMultiplier= StimulusType StimulusType % % // Expression to multiply offset by
Source:RandomNumberADC int RandomSeed= 0 0 0 1 // Initialization value for random number generator (initialize from time if 0)
Source:RandomNumberADC int SignalType= 0 0 0 2 // numeric type of output signal:  0: int16, 1: float32, 2: int32 (enumeration)
Storage:BCI2000FileWriter int SavePrmFile= 0 1 0 1 // save additional parameter file (0=no, 1=yes) (boolean)
Storage:BCI2000FileWriter string StorageTime= % // time of beginning of data storage
Source:Notch%20Filter int NotchFilter= 0 0 0 2 // Power line notch filter: 0: disabled, 1: at 50Hz, 2: at 60Hz (enumeration)
Source:Alignment int AlignChannels= 1 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
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Source:Online%20Processing intlist TransmitChList= 4 1 2 3 4 1 1 128 // list of transmitted channels
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Filtering:SpatialFilter matrix SpatialFilter= 4 4 1 0 0 0 0 1 0 0 0 0 1 0 0 0 0 1 0 % % // columns represent input channels, rows represent output channels
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Filtering:P3TemporalFilter int EpochLength= 400ms 500ms 0 % // Length of data epoch from stimulus onset
Filtering:P3TemporalFilter int EpochsToAverage= 1 1 1 % // Number of epochs to average
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Visualize:P3TemporalFilter int TargetERPChannel= 1 1 0 128 // Target Channel for ERP Display in order of SigProc transfer
Visualize:P3TemporalFilter float ERPMinDispVal= 0 0 -16383 16384 // Minimum value for ERP display
Visualize:P3TemporalFilter float ERPMaxDispVal= 30 300 -16383 16384 // Maximum value for ERP display
Filtering:LinearClassifier matrix Classifier= 2 { input%20channel input%20element%20(bin) output%20channel weight } 1 4 1 1 1 6 2 1 // Linear classification matrix in sparse representation
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Filtering:Normalizer floatlist NormalizerOffsets= 2 0 0 0 % % // normalizer offsets
Filtering:Normalizer floatlist NormalizerGains= 2 1 1 0 % % // normalizer gain values
Filtering:Normalizer intlist Adaptation= 2 0 0 0 0 2 // 0: no adaptation, 1: zero mean, 2: zero mean, unit variance (enumeration)
Filtering:Normalizer matrix BufferConditions= 2 1 (Feedback)&&(TargetCode==1) (Feedback)&&(TargetCode==2) // expressions corresponding to data buffers (columns correspond to output channels, multiple rows correspond to multiple buffers)
Filtering:Normalizer float BufferLength= 9s 9s % % // time window of past data per buffer that enters into statistic
Filtering:Normalizer string UpdateTrigger= (Feedback==0) // expression to trigger offset/gain update when changing from 0 (use empty string for continuous update)
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Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Window int WindowWidth= 640 640 0 % // width of application window
Application:Window int WindowHeight= 480 480 0 % // height of application window
Application:Window int WindowLeft= 0 0 % % // screen coordinate of application window's left edge
Application:Window int WindowTop= 0 0 % % // screen coordinate of application window's top edge
Application:Window string WindowBackgroundColor= 0x000000 0x505050 0x000000 0x000000 // background color (color)
Application:Sequencing float PreRunDuration= 2s 0 0 % // pause preceding first sequence
Application:Sequencing float PostRunDuration= 2s 0 0 % // pause following last sequence
Application:Sequencing float PreSequenceDuration= 1/2s 2s 0 % // pause preceding sequences/sets of intensifications
Application:Sequencing float PostSequenceDuration= 3/4s 2s 0 % // pause following sequences/sets of intensifications
Application:Sequencing floatlist StimulusDuration= 1 31.25ms 40ms 0 % // stimulus duration(s)
Application:Sequencing floatlist ISIMinDuration= 1 31.25ms 80ms 0 % // minimum duration(s) of inter-stimulus interval
Application:Sequencing floatlist ISIMaxDuration= 1 31.25ms 80ms 0 % // maximum duration(s) of inter-stimulus interval
Application:Result%20Processing int InterpretMode= 1 0 0 2 // interpretation of results: 0 none, 1 online free mode, 2 offline copy mode (enumeration)
Application:Result%20Processing int DisplayResults= 1 1 0 1 // display results of copy/free spelling (boolean)
Application:Sequencing int NumberOfSequences= 1 15 1 % // number of sequences in a set of intensifications
Application:Speller%20Targets matrix TargetDefinitions= 2 1 { matrix 36 { Display Enter Display%20Size Icon%20File Audio%20File } A A 1 % % B B 1 % % C C 1 % % D D 1 % % E E 1 % % F F 1 % % G G 1 % % H H 1 % % I I 1 % % J J 1 % % K K 1 % % L L 1 % % M M 1 % % N N 1 % % O O 1 % % P P 1 % % Q Q 1 % % R R 1 % % S S 1 % % T T 1 % % U U 1 % % V V 1 % % W W 1 % % X X 1 % % Y Y 1 % % Z Z 1 % % BS <BS> 0.5 % % UNDO <UNDO> 0.5 % % END <END> 0.5 % % SLEEP <SLEEP> 0.5 % % PAUSE <PAUSE> 0.5 % % SAVE <SAVE> 0.5 % % RETR <RETR> 0.5 % % GOTO%202 <GOTO%202> 0.5 % % DW <DW> 0.5 % % _ %20 1 % % } { matrix 4 { Display Enter Display%20Size Icon%20File Audio%20File } back <BK> 1 % % goto%201 <GOTO%201> 1 % % save <SAVE> 1 ./images/02.02%20(256x256)%20drink.bmp % retrieve <RETR> 1 ./images/02.01%20(256x256)%20snack.bmp % } // speller target properties
Application:Speller%20Targets intlist NumMatrixColumns= 2 6 2 6 1 6 // display matrices' column number(s)
Application:Speller%20Targets intlist NumMatrixRows= 2 6 2 6 0 6 // display matrices' row number(s)
Application:Audio%20Stimuli int AudioStimuliOn= 0 0 0 1 // Audio Stimuli Mode (0=no, 1=yes) (boolean)
Application:Audio%20Stimuli matrix AudioStimuliRowsFiles= 6 { filename } ./voice/1.wav ./voice/2.wav ./voice/3.wav ./voice/4.wav ./voice/5.wav ./voice/6.wav // audio stimuli rows files 
Application:Audio%20Stimuli matrix AudioStimuliColsFiles= 6 { filename } ./voice/a.wav ./voice/b.wav ./voice/c.wav ./prog/voice/d.wav ./prog/voice/e.wav ./prog/voice/f.wav // audio stimuli column files 
Application:Speller%20Targets floatlist TargetWidth= 2 12 40 0 0 100 // target width in percent of screen width
Application:Speller%20Targets floatlist TargetHeight= 2 12 40 0 0 100 // target height in percent of screen height
Application:Speller%20Targets floatlist TargetTextHeight= 2 8 14 0 0 100 // height of target labels in percent of screen height
Application:Speller%20Targets stringlist BackgroundColor= 1 0x00000000 0x505050 % % // target background color (color)
Application:Speller%20Targets stringlist TextColor= 1 0x00555555 0x505050 % % // text color (color)
Application:Speller%20Targets stringlist TextColorIntensified= 1 0x00FFFFFF 0x505050 % % // intensified text color (color)
Application:Speller%20Targets intlist IconHighlightMode= 1 1 1 0 2 // icon highlight method 0: Show/Hide, 1: Intensify, 2: Grayscale, 3: Invert, 4: Dim    (enumeration)
Application:Speller%20Targets floatlist IconHighlightFactor= 1 0.5 0.5 0 % // scale factor for highlighted icon pixel values
Application:Speller int FirstActiveMenu= 1 1 1 % // Index of first active menu
Application:Speller float StatusBarSize= 10 0 0 100 // size of status bar in percent of screen height
Application:Speller float StatusBarTextHeight= 4 0 0 100 // size of status bar text in percent of screen height
Application:Speller string TextToSpell= % // character or string to spell in offline copy mode
Application:Speller string TextResult= % // user spelling result
Application:Speller int TestMode= 1 0 0 1 // select targets by clicking on their associated stimuli (0=no, 1=yes) (boolean)
Application:Speller string DestinationAddress= % // network address for speller output in IP:port format
Application:Text%20Window int TextWindowEnabled= 1 0 0 1 // Show Text Window (0=no, 1=yes) (boolean)
Application:Text%20Window int TextWindowLeft= 640 0 0 % // Text Window X location
Application:Text%20Window int TextWindowTop= 0 0 0 % // Text Window Y location
Application:Text%20Window int TextWindowWidth= 512 512 0 % // Text Window Width
Application:Text%20Window int TextWindowHeight= 512 512 0 % // Text Window Height
Application:Text%20Window string TextWindowFontName= Courier // Text Window Font Name
Application:Text%20Window int TextWindowFontSize= 10 4 1 % // Text Window Font Size
Application:Text%20Window string TextWindowFilePath= % // Path for Saved Text File (directory)
Connector:ConnectorOutput string ConnectorOutputAddress= % localhost:20320 % % // IP address/port to write to, e.g. localhost:20320
Application:Localization string Language= Default Default % % // Language for user messages
Application:Localization matrix LocalizedStrings= { German } { TIME%20OUT%20!!! Waiting%20to%20start%20... } Zeit%20abgelaufen! Warte%20... // Localized user messages
System:Command%20Line%20Arguments variant DebugLevel= 1 0 0 0 
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