Source:Signal%20Properties:DataIOFilter int SourceCh= 144 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:DataIOFilter int SampleBlockSize= 20 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:DataIOFilter int SamplingRate= 1000 256Hz 1 % // sample rate
Source:Signal%20Properties:DataIOFilter list ChannelNames= 144 chan1 chan2 chan3 chan4 chan5 chan6 chan7 chan8 chan9 chan10 chan11 chan12 chan13 chan14 chan15 chan16 chan17 chan18 chan19 chan20 chan21 chan22 chan23 chan24 chan25 chan26 chan27 chan28 chan29 chan30 chan31 chan32 chan33 chan34 chan35 chan36 chan37 chan38 chan39 chan40 chan41 chan42 chan43 chan44 chan45 chan46 chan47 chan48 chan49 chan50 chan51 chan52 chan53 chan54 chan55 chan56 chan57 chan58 chan59 chan60 chan61 chan62 chan63 chan64 chan65 chan66 chan67 chan68 chan69 chan70 chan71 chan72 chan73 chan74 chan75 chan76 chan77 chan78 chan79 chan80 chan81 chan82 chan83 chan84 chan85 chan86 chan87 chan88 chan89 chan90 chan91 chan92 chan93 chan94 chan95 chan96 chan97 chan98 chan99 chan100 chan101 chan102 chan103 chan104 chan105 chan106 chan107 chan108 chan109 chan110 chan111 chan112 chan113 chan114 chan115 chan116 chan117 chan118 chan119 chan120 chan121 chan122 chan123 chan124 chan125 chan126 chan127 chan128 ainp1 ainp2 ainp3 ainp4 ainp5 ainp6 ainp7 ainp8 ainp9 ainp10 ainp11 ainp12 ainp13 ainp14 ainp15 ainp16 // list of channel names
Source:Signal%20Properties:DataIOFilter floatlist SourceChOffset= 144 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 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0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties:DataIOFilter floatlist SourceChGain= 144 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 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1 0.003 % % // gain for each channel (A/D units -> muV)
Source:Signal%20Properties:BlackrockADC intlist AnalogCh= 1 0 0 % % // Analog channels to acquire from Blackrock
Source:Signal%20Properties:BlackrockADC int SignalFilter= 0 0 0 12 // Filter to apply to data: 0 No Filter, 1 HP 750Hz, 2 HP 250Hz, 3 HP 100Hz, 4 LP 50Hz, 5 LP 125Hz, 6 LP 250Hz, 7 LP 500Hz, 8 LP 150Hz, 9 BP 10Hz-250Hz, 10 LP 2.5kHz, 11 LP 2kHz, 12 BP 250Hz-5kHz (enumeration)
