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Source:Signal%20Properties int SourceCh= 16 16 1 % // number of digitized and stored channels
Source:Signal%20Properties int SampleBlockSize= 8 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties int SamplingRate= 256 256Hz 1 % // sample rate
Source:Signal%20Properties list ChannelNames= 0 // list of channel names
Source:Signal%20Properties floatlist SourceChOffset= 16 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties floatlist SourceChGain= 16 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.003 % % // gain for each channel (A/D units -> muV)
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Source:SignalGeneratorADC int ModulateAmplitude= 1 0 0 1 // Modulate the amplitude with the mouse (0=no, 1=yes) (boolean)
Source:SignalGeneratorADC int SineChannelX= 1 0 0 % // Channel number of sinewave controlled by mouse x position
Source:SignalGeneratorADC int SineChannelY= 2 0 0 % // Channel number of sinewave controlled by mouse y position (0 for all)
Source:SignalGeneratorADC int SineChannelZ= 0 0 0 % // Channel number of sinewave controlled by mouse key state
Source:SignalGeneratorADC float SineFrequency= 9Hz 10Hz % % // Frequency of sine wave
Source:SignalGeneratorADC int SineAmplitude= 100muV 100muV % % // Amplitude of sine wave
Source:SignalGeneratorADC int NoiseAmplitude= 30muV 30muV % % // Amplitude of white noise (common to all channels)
Source:SignalGeneratorADC int DCOffset= 0 0muV % % // DC offset (common to all channels)
Source:SignalGeneratorADC string OffsetMultiplier= % StimulusType % % // Expression to multiply offset by
Source:SignalGeneratorADC int RandomSeed= 0 0 0 1 // Initialization value for random number generator (initialize from time if 0)
Source:SignalGeneratorADC int SignalType= 0 0 0 2 // numeric type of output signal:  0: int16, 1: float32, 2: int32 (enumeration)
Storage:BCI2000FileWriter int SavePrmFile= 0 1 0 1 // save additional parameter file (0=no, 1=yes) (boolean)
Storage:BCI2000FileWriter string StorageTime= % // time of beginning of data storage
Source:Alignment int AlignChannels= 0 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing list TransmitChList= 16 1 2 3 4 5 6 7 8 9 10 11 12 13 14 15 16 1 1 128 // list of transmitted channels
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System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 SignalGeneratorADC 1 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain
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Filtering:SpatialFilter int SpatialFilterType= 3 2 0 3 // spatial filter type 0: none, 1: full matrix, 2: sparse matrix, 3: common average reference (CAR) (enumeration)
Filtering:SpatialFilter:SpatialFilter intlist SpatialFilterCAROutput= 0 // list of output channels for the CAR if used
Filtering:SpatialFilter:SpatialFilter matrix SpatialFilter= 0 0 0 % % // columns represent input channels, rows represent output channels
Filtering:ARFilter int WindowLength= 0.5s 0.5s % % // Time window for spectrum computation
Filtering:ARFilter int Detrend= 0 0 0 2 // Detrend data? 0: no, 1: mean, 2: linear (enumeration)
Filtering:ARFilter int ModelOrder= 16 16 0 % // AR model order
Filtering:ARFilter int OutputType= 0 0 0 2 // 0: Spectral Amplitude, 1: Spectral Power, 2: AR Coefficients (enumeration)
Filtering:ARFilter float FirstBinCenter= 0Hz 0Hz % % // Center of first frequency bin in Hz
Filtering:ARFilter float LastBinCenter= 30Hz 30Hz % % // Center of last frequency bin in Hz
Filtering:ARFilter float BinWidth= 3Hz 3Hz % % // Width of spectral bins in Hz
Filtering:ARFilter int EvaluationsPerBin= 15 15 1 % // Number of uniformly spaced evaluation points entering into a single bin value
Filtering:LinearClassifier matrix Classifier= 1 { input%20channel input%20element%20(bin) output%20channel weight } 2 9Hz 2 1 // Linear classification matrix in sparse representation
Filtering:LPFilter float LPTimeConstant= 1s 16s 0 % // time constant for the low pass filter
Filtering:Normalizer floatlist NormalizerOffsets= 2 -1 32 0 % % // normalizer offsets
Filtering:Normalizer floatlist NormalizerGains= 2 2 0.5 0 % % // normalizer gain values
Filtering:Normalizer intlist Adaptation= 2 0 2 0 0 2 // 0: no adaptation, 1: zero mean, 2: zero mean, unit variance (enumeration)
Filtering:Normalizer matrix BufferConditions= 2 2 0 (Feedback)&&(TargetCode==1) 0 (Feedback)&&(TargetCode==2) // expressions corresponding to data buffers (columns correspond to output channels, multiple rows correspond to multiple buffers)
Filtering:Normalizer float BufferLength= 4s 9s % % // time window of past data per buffer that enters into statistic
Filtering:Normalizer string UpdateTrigger= (Feedback==0) // expression to trigger offset/gain update when changing from 0 (use empty string for continuous update)
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System:Configuration matrix SignalProcessingFilterChain= 5 { Filter%20Name Position%20String } SpatialFilter 2.B ARFilter 2.C LinearClassifier 2.D LPFilter 2.D1 Normalizer 2.E // SignalProcessing filter chain
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Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Window int WindowWidth= 640 640 0 % // width of application window
Application:Window int WindowHeight= 480 480 0 % // height of application window
Application:Window int WindowLeft= 0 0 % % // screen coordinate of application window's left edge
Application:Window int WindowTop= 0 0 % % // screen coordinate of application window's top edge
Application:Sequencing float PreRunDuration= 2s 2s 0 % // duration of pause preceding first trial
Application:Sequencing float PreFeedbackDuration= 2s 2s 0 % // duration of target display prior to feedback
Application:Sequencing float FeedbackDuration= 2s 3s 0 % // duration of feedback
Application:Sequencing float PostFeedbackDuration= 1s 1s 0 % // duration of result display after feedback
Application:Sequencing float ITIDuration= 1s 1s 0 % // duration of inter-trial interval
Application:Sequencing float MinRunLength= 120s 120s 0 % // minimum duration of a run
Application:Targets int NumberTargets= 2 2 0 15 // number of targets
Application:Window int RenderingQuality= 1 0 0 1 // rendering quality: 0: low, 1: high (enumeration)
Application:Window int WindowBitDepth= 16 16 1 32 // color bit depth of feedback window
Application:Sequencing float MaxFeedbackDuration= 4s % 0 % // abort a trial after this amount of feedback time has expired
Application:3DEnvironment floatlist CameraPos= 3 50 50 150 // camera position vector in percent coordinates of 3D area
Application:3DEnvironment floatlist CameraAim= 3 50 50 50 // camera aim point in percent coordinates
Application:3DEnvironment int CameraProjection= 0 0 0 2 // projection type: 0: flat, 1: wide angle perspective, 2: narrow angle perspective (enumeration)
Application:3DEnvironment floatlist LightSourcePos= 3 50 50 150 // light source position in percent coordinates
Application:3DEnvironment int LightSourceColor= 0xffffff // light source RGB color (color)
Application:3DEnvironment int WorkspaceBoundaryColor= 0xffff00 0 % % // workspace boundary color (0xff000000 for invisible) (color)
Application:3DEnvironment string WorkspaceBoundaryTexture= images\grid.bmp // path of workspace boundary texture (inputfile)
Application:Cursor float CursorWidth= 10 10 0.0 % // feedback cursor width in percent of screen width
Application:Cursor int CursorColorFront= 0xff0000 // cursor color when it is at the front of the workspace (color)
Application:Cursor int CursorColorBack= 0xff0000 // cursor color when it is in the back of the workspace (color)
Application:Cursor string CursorTexture= % // path of cursor texture (inputfile)
Application:Cursor floatlist CursorPos= 3 0 50 50 // cursor starting position
Application:Targets matrix Targets= 2 { pos%20x pos%20y pos%20z width%20x width%20y width%20z } 96 25 50 8 50 8 96 75 50 8 50 8 // target positions and widths in percentage coordinates
Application:Targets int TargetColor= 0xff0000 // target color (color)
Application:Targets string TargetTexture= % // path of target texture (inputfile)
Application:Targets int TestAllTargets= 1 0 0 1 // test all targets for cursor collision? 0: test only the visible current target, 1: test all targets (enumeration)
Connector:ConnectorOutput string ConnectorOutputAddress= % localhost:20320 % % // IP address/port to write to, e.g. localhost:20320
Application:Localization string Language= Default Default % % // Language for user messages
Application:Localization matrix LocalizedStrings= { German } { Timeout Be%20prepared%20... T } Inaktiv Achtung%20... T // Localized user messages
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System:Configuration matrix ApplicationFilterChain= 3 { Filter%20Name Position%20String } ConnectorInput 2.9999 CursorFeedbackTask 3 ConnectorOutput 3.9999 // Application filter chain
