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Source:Signal%20Properties:DataIOFilter list ChannelNames= 0 // list of channel names
Storage:Data%20Location:DataIOFilter string DataDirectory= ..\data ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectName= Name Name % % // subject alias
Storage:Session:DataIOFilter string SubjectSession= 001 001 % % // three-digit session number
Storage:Session:DataIOFilter string SubjectRun= 00 00 % % // two-digit run number
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
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Source:Signal%20Properties:SignalGeneratorADC int SourceCh= 1 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:SignalGeneratorADC int SampleBlockSize= 128 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:SignalGeneratorADC int SamplingRate= 256Hz 256Hz 1 % // sample rate
Source:SignalGeneratorADC list SourceChOffset= 1 0 
Source:SignalGeneratorADC list SourceChGain= 1 0.003 
Source:SignalGeneratorADC int ModulateAmplitude= 1 0 0 1 // Modulate the amplitude with the mouse (0=no, 1=yes) (boolean)
Source:SignalGeneratorADC int SineChannelX= 0 0 0 % // Channel number of sinewave controlled by mouse x position
Source:SignalGeneratorADC int SineChannelY= 0 0 0 % // Channel number of sinewave controlled by mouse y position (0 for all)
Source:SignalGeneratorADC int SineChannelZ= 0 0 0 % // Channel number of sinewave controlled by mouse key state
Source:SignalGeneratorADC float SineFrequency= 12Hz 10Hz % % // Frequency of sine wave
Source:SignalGeneratorADC int SineAmplitude= 100muV 100muV % % // Amplitude of sine wave
Source:SignalGeneratorADC int NoiseAmplitude= 30muV 30muV % % // Amplitude of white noise (common to all channels)
Source:SignalGeneratorADC int DCOffset= 0muV 0muV % % // DC offset (common to all channels)
Source:SignalGeneratorADC string AmplitudeMultiplier= 1 1 % % // Expression to multiply amplitude by
Source:SignalGeneratorADC string OffsetMultiplier= % StimulusType % % // Expression to multiply offset by
Source:SignalGeneratorADC int SignalType= 0 0 0 2 // numeric type of output signal:  0: int16, 1: float32, 2: int32 (enumeration)
Source:SignalGeneratorADC matrix SourceProperties= 0 { Frequency Amplitude } // Source properties
Source:SignalGeneratorADC matrix MixingMatrix= 0 1 // Source-to-sensor projection, rows are sources, columns are sensors
Storage:BCI2000FileWriter string FileFormat= dat // format of data file (readonly)
Storage:Documentation:BCI2000FileWriter string StorageTime= % // time of beginning of data storage
Source:Alignment:AlignmentFilter int AlignChannels= 1 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 1 * // list of transmitted channels: Channel names may contain * and ? wildcards,  and character ranges enclosed in []; wildcard patterns may be negated by prepending an exclamation mark.  Ranges of channels may be specified using : or - to separate begin from end.
System:Additional%20Connections:EventLink int EventLink= 1 1 0 1 // Send events from Operator to Source module (boolean)(readonly)
Storage:Data%20Location:RunManager string DataFile= $%7bSubjectName%7d$%7bSubjectSession%7d/$%7bSubjectName%7dS$%7bSubjectSession%7dR$%7bSubjectRun%7d.$%7bFileFormat%7d // name of data file relative to DataDirectory
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System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 SignalGeneratorADC 1 GDFFileWriter 1 EDFFileWriter 1 BCI2000FileWriter 1 NullFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain(readonly)
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Filtering:Windowing:WindowingThread int WindowLength= 1s 0.5s % % // Length of window
Filtering:Windowing:WindowingThread int Detrend= 0 0 0 2 // Detrend data? 0: no, 1: mean, 2: linear (enumeration)
Filtering:Windowing:WindowingThread int WindowFunction= 0 0 0 3 // Window function 0: Rectangular, 1: Hamming, 2: Hann, 3: Blackman (enumeration)
Filtering:EMDThread float SiftStopStdDev= 0.3 0.3 0.05 1.0 // Standard deviation used to stop EMD sifting
Filtering:EMDThread int Interpolation= 1 1 0 1 // Interpolation method to use for calculating bounding envelopes (0 = linear, 1 = cubic)
Filtering:EMDThread int MaxIMFs= 1 10 0 64 // Maximum number of Intrinsic Mode Functions (IMFs) to return
Filtering:Spectral%20Estimation:FFTThread float FirstBinCenter= 0Hz 0Hz % % // Center of first frequency bin (in Hz)
Filtering:Spectral%20Estimation:FFTThread float LastBinCenter= 30Hz 30Hz % % // Center of last frequency bin (in Hz)
Filtering:Spectral%20Estimation:FFTThread float BinWidth= 1Hz 3Hz % % // Width of spectral bins (in Hz)
Filtering:Spectral%20Estimation:FFTThread int OutputType= 0 0 0 2 // 0: Spectral Amplitude, 1: Spectral Power, 2: Coefficients (enumeration)
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System:Configuration matrix SignalProcessingFilterChain= 3 { Filter%20Name Position%20String } WindowingFilter 2.A EMDFilter 2.B FFTSpectrum 2.C // SignalProcessing filter chain(readonly)
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Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Application%20Window:ApplicationWindow int WindowWidth= 640 640 0 % // width of Application window
Application:Application%20Window:ApplicationWindow int WindowHeight= 480 480 0 % // height of Application window
Application:Application%20Window:ApplicationWindow int WindowLeft= 0 0 % % // screen coordinate of Application window's left edge
Application:Application%20Window:ApplicationWindow int WindowTop= 0 0 % % // screen coordinate of Application window's top edge
Application:Application%20Window:ApplicationWindow string WindowBackgroundColor= 0x000000 0x505050 % % // Application window background color (color)
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Visualize:Application%20Log:ApplicationBase int ShowAppLog= 1 0 0 1 // Show application log window (boolean)
Application:Sequencing:FeedbackTask float PreRunDuration= 2s 2s 0 % // duration of pause preceding first trial
Application:Sequencing:FeedbackTask float PreFeedbackDuration= 2s 2s 0 % // duration of target display prior to feedback
Application:Sequencing:FeedbackTask float FeedbackDuration= 6s 3s 0 % // duration of feedback
Application:Sequencing:FeedbackTask float PostFeedbackDuration= 2s 1s 0 % // duration of result display after feedback
Application:Sequencing:FeedbackTask float ITIDuration= 3s 1s 0 % // duration of inter-trial interval
Application:Sequencing:FeedbackTask float MinRunLength= % 120s 0 % // minimum duration of a run; if blank, NumberOfTrials is used
Application:Sequencing:FeedbackTask int NumberOfTrials= 5 0 0 % // number of trials; if blank, MinRunLength is used
Application:Targets:FeedbackTask int NumberTargets= 2 2 0 255 // number of targets
Application:Targets:FeedbackTask intlist TargetSequence= 0 1 % % // fixed sequence in which targets should be presented (leave empty for random)
Application:Mongoose:MongooseFeedbackTask string FileDirectory= C:\Users\kaysoky\Desktop\NeuralSystemsBCI2000\prog\CountdownGame // Directory where the game files are located (directory)
Application:Mongoose:MongooseFeedbackTask string ListeningPort= 20000 20320 % % // Port for the server to listen on
Application:SSVEP:SSVEPFeedbackTask matrix Arrows= 2 { Frequency X Y } 12 10 50 17 90 50 // Frequency of input expected for each target and their position in percentage coordinates
Application:SSVEP:SSVEPFeedbackTask float ArrowLength= 10 % 0 100 // Length of an arrow in percent of screen dimensions
Application:SSVEP:SSVEPFeedbackTask int StimulusMode= 0 0 0 1 // Training or classification: 0 Training, 1 Classification (enumeration)
Application:SSVEP:SSVEPFeedbackTask string TrainingFile= C:/Users/kaysoky/Desktop/NeuralSystemsBCI2000/data/SSVEP/Training.tsv // File to store/read the result of training (inputfile)
Application:SSVEP:SSVEPFeedbackTask float ClassificationThreshold= 0.95 % 0 1 // Probability threshold at which some particular classification is made
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeStateName= % // State to be translated into keystrokes (0-F), empty for off
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpression= % // Expression that evaluates to a virtual keycode, empty for off
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpressionOnStartRun= % // Expression that initializes expression variables on StartRun
Connector:ConnectorOutput string ConnectorOutputAddress= % localhost:20321 % % // one or more IP:Port combinations, e.g. localhost:20321
Connector:ConnectorOutput string ConnectorOutputFormat= Verbose Verbose % % // Either "Verbose" or "JSON"
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System:Configuration matrix ApplicationFilterChain= 4 { Filter%20Name Position%20String } ConnectorInput 2.9999 SSVEPFeedbackTask 3 KeystrokeFilter 3.1 ConnectorOutput 3.9999 // Application filter chain(readonly)
System:Randomization int RandomSeed= 27199 0 % % // seed for the BCI2000 pseudo random number generator(readonly)
System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)(readonly)
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