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Source:Signal%20Properties:DataIOFilter list ChannelNames= 0 // list of channel names
Storage:Data%20Location:DataIOFilter string DataDirectory= ..\data ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectName= Name Name % % // subject alias
Storage:Session:DataIOFilter string SubjectSession= 001 001 % % // three-digit session number
Storage:Session:DataIOFilter string SubjectRun= 00 00 % % // two-digit run number
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
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Source:Signal%20Properties:SignalGeneratorADC int SourceCh= 2 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:SignalGeneratorADC int SampleBlockSize= 8 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:SignalGeneratorADC int SamplingRate= 256Hz 256Hz 1 % // sample rate
Source:SignalGeneratorADC list SourceChOffset= 2 0 0 
Source:SignalGeneratorADC list SourceChGain= 2 0.003 0.003 
Source:SignalGeneratorADC int ModulateAmplitude= 1 0 0 1 // Modulate the amplitude with the mouse (0=no, 1=yes) (boolean)
Source:SignalGeneratorADC int SineChannelX= 1 0 0 % // Channel number of sinewave controlled by mouse x position
Source:SignalGeneratorADC int SineChannelY= 2 0 0 % // Channel number of sinewave controlled by mouse y position (0 for all)
Source:SignalGeneratorADC int SineChannelZ= 0 0 0 % // Channel number of sinewave controlled by mouse key state
Source:SignalGeneratorADC float SineFrequency= 10Hz 10Hz % % // Frequency of sine wave
Source:SignalGeneratorADC int SineAmplitude= 100muV 100muV % % // Amplitude of sine wave
Source:SignalGeneratorADC int NoiseAmplitude= 30muV 30muV % % // Amplitude of white noise (common to all channels)
Source:SignalGeneratorADC int DCOffset= 0muV 0muV % % // DC offset (common to all channels)
Source:SignalGeneratorADC string AmplitudeMultiplier= 1 1 % % // Expression to multiply amplitude by
Source:SignalGeneratorADC string OffsetMultiplier= % StimulusType % % // Expression to multiply offset by
Source:SignalGeneratorADC int SignalType= 0 0 0 2 // numeric type of output signal:  0: int16, 1: float32, 2: int32 (enumeration)
Source:SignalGeneratorADC matrix SourceProperties= 0 { Frequency Amplitude } // Source properties
Source:SignalGeneratorADC matrix MixingMatrix= 0 1 // Source-to-sensor projection, rows are sources, columns are sensors
Storage:BCI2000FileWriter string FileFormat= dat // format of data file (readonly)
Storage:Documentation:BCI2000FileWriter string StorageTime= % // time of beginning of data storage
Source:Alignment:AlignmentFilter int AlignChannels= 1 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 1 * // list of transmitted channels: Channel names may contain * and ? wildcards,  and character ranges enclosed in []; wildcard patterns may be negated by prepending an exclamation mark.  Ranges of channels may be specified using : or - to separate begin from end.
System:Additional%20Connections:EventLink int EventLink= 1 1 0 1 // Send events from Operator to Source module (boolean)(readonly)
Storage:Data%20Location:RunManager string DataFile= $%7bSubjectName%7d$%7bSubjectSession%7d/$%7bSubjectName%7dS$%7bSubjectSession%7dR$%7bSubjectRun%7d.$%7bFileFormat%7d // name of data file relative to DataDirectory
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System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 SignalGeneratorADC 1 GDFFileWriter 1 EDFFileWriter 1 BCI2000FileWriter 1 NullFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain(readonly)
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Filtering:ExpressionFilter string StartRunExpression= % // expression executed on StartRun
Filtering:ExpressionFilter string StopRunExpression= % // expression executed on StopRun
Filtering:ExpressionFilter matrix Expressions= 0 1 // expressions used to compute the output of the ExpressionFilter (rows are channels; empty matrix for none)
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System:Configuration matrix SignalProcessingFilterChain= 1 { Filter%20Name Position%20String } ExpressionFilter 2.D2 // SignalProcessing filter chain(readonly)
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Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Application%20Window:ApplicationWindow int WindowWidth= 640 640 0 % // width of Application window
Application:Application%20Window:ApplicationWindow int WindowHeight= 480 480 0 % // height of Application window
Application:Application%20Window:ApplicationWindow int WindowLeft= 0 0 % % // screen coordinate of Application window's left edge
Application:Application%20Window:ApplicationWindow int WindowTop= 0 0 % % // screen coordinate of Application window's top edge
Application:Application%20Window:ApplicationWindow string WindowBackgroundColor= 0x000000 0x505050 % % // Application window background color (color)
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Visualize:Application%20Log:ApplicationBase int ShowAppLog= 1 0 0 1 // Show application log window (boolean)
Application:Sequencing:FeedbackTask float PreRunDuration= 2s 2s 0 % // duration of pause preceding first trial
Application:Sequencing:FeedbackTask float PreFeedbackDuration= 2s 2s 0 % // duration of target display prior to feedback
Application:Sequencing:FeedbackTask float FeedbackDuration= 3s 3s 0 % // duration of feedback
Application:Sequencing:FeedbackTask float PostFeedbackDuration= 1s 1s 0 % // duration of result display after feedback
Application:Sequencing:FeedbackTask float ITIDuration= 1s 1s 0 % // duration of inter-trial interval
Application:Sequencing:FeedbackTask float MinRunLength= 120s 120s 0 % // minimum duration of a run; if blank, NumberOfTrials is used
Application:Sequencing:FeedbackTask int NumberOfTrials= % 0 0 % // number of trials; if blank, MinRunLength is used
Application:Targets:FeedbackTask int NumberTargets= 2 2 0 255 // number of targets
Application:Targets:FeedbackTask intlist TargetSequence= 0 1 % % // fixed sequence in which targets should be presented (leave empty for random)
Application:Targets:DynamicFeedbackTask int TaskDifficulty= 5 // Difficulty is from to 1(hardest) to 5(easiest) 
Application:Targets:DynamicFeedbackTask matrix Targets= 2 { pos%20x pos%20y width%20x width%20y } 0 0 100 10 0 90 100 10 // Number of targets and their positions/dimensions in percentage coordinates
Application:Targets:DynamicFeedbackTask int TargetColor= 0x0000FF // target color (color)
Application:Cursor:DynamicFeedbackTask float CursorWidth= 10 10 0.0 % // feedback cursor width in percent of screen width
Application:Cursor:DynamicFeedbackTask float CursorSpeedMult= 3 // Cursor speed from to 1(slowest) to 10(fastest) 
Application:Cursor:DynamicFeedbackTask float CursorGravity= 1 // Centering cursor gravity from to 0 (weakest) to 10 (strongest) 
Application:Cursor:DynamicFeedbackTask int CursorColor= 0xff0000 // Cursor color (color)
Application:Cursor:DynamicFeedbackTask floatlist CursorPos= 3 50 50 50 // cursor starting position
Application:Sequencing:DynamicFeedbackTask float MaxFeedbackDuration= 3s % 0 % // abort a trial after this amount of feedback time has expired
Application:3DEnvironment:DynamicFeedbackTask int WorkspaceBoundaryColor= 0xffffff 0 % % // workspace boundary color (0xff000000 for invisible) (color)
Application:Feedback:DynamicFeedbackTask int VisualFeedback= 1 1 0 1 // provide visual stimulus (boolean)
Application:Feedback:DynamicFeedbackTask intlist VisualCatchTrials= 0 // list of visual catch trials, leave empty for none
Application:Connector:DynamicFeedbackTask string ConnectorAddress= 127.0.0.1:3000 localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeStateName= % // State to be translated into keystrokes (0-F), empty for off
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpression= % // Expression that evaluates to a virtual keycode, empty for off
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpressionOnStartRun= % // Expression that initializes expression variables on StartRun
Connector:ConnectorOutput string ConnectorOutputAddress= % localhost:20321 % % // one or more IP:Port combinations, e.g. localhost:20321
Connector:ConnectorOutput string ConnectorOutputFormat= Verbose Verbose % % // Either "Verbose" or "JSON"
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System:Configuration matrix ApplicationFilterChain= 4 { Filter%20Name Position%20String } ConnectorInput 2.9999 DynamicFeedbackTask 3 KeystrokeFilter 3.1 ConnectorOutput 3.9999 // Application filter chain(readonly)
System:Randomization int RandomSeed= 19069 0 % % // seed for the BCI2000 pseudo random number generator(readonly)
System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)(readonly)
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