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Filtering:SpatialFilter int SpatialFilterType= 1 2 0 3 // spatial filter type 0: none, 1: full matrix, 2: sparse matrix, 3: common average reference (CAR) (enumeration)
Filtering:SpatialFilter:SpatialFilter intlist SpatialFilterCAROutput= 0 // list of output channels for the CAR if used
Filtering:SpatialFilter:SpatialFilter matrix SpatialFilter= 1 5 1 -.25 -.25 -.25 -.25 0 % % // columns represent input channels, rows represent output channels
Filtering:SpatialFilter:SpatialFilter int SFUseThreading= 1 0 0 1 // Use threading to calculate spatial filter (boolean)
Filtering:ARFilter int WindowLength= 0.5s 0.5s % % // Time window for spectrum computation
Filtering:ARFilter int Detrend= 0 0 0 2 // Detrend data? 0: no, 1: mean, 2: linear (enumeration)
Filtering:ARFilter int ModelOrder= 16 16 0 % // AR model order
Filtering:ARFilter int OutputType= 0 0 0 2 // 0: Spectral Amplitude, 1: Spectral Power, 2: AR Coefficients (enumeration)
Filtering:ARFilter float FirstBinCenter= 0Hz 0Hz % % // Center of first frequency bin (in Hz)
Filtering:ARFilter float LastBinCenter= 30Hz 30Hz % % // Center of last frequency bin (in Hz)
Filtering:ARFilter float BinWidth= 3Hz 3Hz % % // Width of spectral bins (in Hz)
Filtering:ARFilter int EvaluationsPerBin= 15 15 1 % // Number of uniformly spaced evaluation points entering into a single bin value
Filtering:LinearClassifier matrix Classifier= 1 { input%20channel input%20element%20(bin) output%20channel weight } 1 5 1 1 // Linear classification matrix in sparse representation
Filtering:LPFilter float LPTimeConstant= 0 16s 0 % // time constant for the low pass filter
Filtering:ExpressionFilter matrix Expressions= 0 1 // expressions used to compute the output of the ExpressionFilter (rows are channels; empty matrix for none)
Filtering:Normalizer floatlist NormalizerOffsets= 3 310.4 150.796 0 0 % % // normalizer offsets
Filtering:Normalizer floatlist NormalizerGains= 3 0.00585386 0.00446831 0 0 % % // normalizer gain values
Filtering:Normalizer intlist Adaptation= 3 2 2 0 0 0 2 // 0: no adaptation, 1: zero mean, 2: zero mean, unit variance (enumeration)
Filtering:Normalizer matrix BufferConditions= 2 1 (Feedback)&&(TargetCode==1) (Feedback)&&(TargetCode==2) // expressions corresponding to data buffers (columns correspond to output channels, multiple rows correspond to multiple buffers)
Filtering:Normalizer float BufferLength= 4s 9s % % // time window of past data per buffer that enters into statistic
Filtering:Normalizer string UpdateTrigger= (Feedback==0) // expression to trigger offset/gain update when changing from 0 (use empty string for continuous update)
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System:Configuration matrix SignalProcessingFilterChain= 6 { Filter%20Name Position%20String } SpatialFilter 2.B ARFilter 2.C LinearClassifier 2.D LPFilter 2.D1 ExpressionFilter 2.D2 Normalizer 2.E // SignalProcessing filter chain
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Source:Signal%20Properties:DataIOFilter int SourceCh= 32 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:DataIOFilter int SampleBlockSize= 40 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:DataIOFilter int SamplingRate= 1200 256Hz 1 % // sample rate
Source:Signal%20Properties:DataIOFilter list ChannelNames= 0 // list of channel names
Source:Signal%20Properties:DataIOFilter floatlist SourceChOffset= 32 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties:DataIOFilter floatlist SourceChGain= 32 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 % % // gain for each channel (A/D units -> muV)
Storage:Data%20Location:DataIOFilter string DataDirectory= ..\data ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectName= Name Name % % // subject alias
Storage:Session:DataIOFilter string SubjectSession= 001 001 % % // three-digit session number
Storage:Session:DataIOFilter string SubjectRun= 00 00 % % // two-digit run number
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
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Source:gUSBampADC intlist SourceChList= 0 0 1 128 // list of channels to digitize
Source:gUSBampADC intlist SourceChDevices= 2 16 16 16 1 17 // number of digitized channels per device
Source:gUSBampADC int NumBuffers= 5 1 2 32 // number of software buffers to use
Source:gUSBampADC string DeviceIDMaster= UA-2008.12.04 // deviceID for the device whose SYNC goes to the slaves
Source:gUSBampADC int FilterEnabled= 1 1 0 1 // Enable pass band filter (0=no, 1=yes)
Source:gUSBampADC float FilterHighPass= 0.1 0.1 0 50 // high pass filter for pass band
Source:gUSBampADC float FilterLowPass= 500 60 0 4000 // low pass filter for pass band
Source:gUSBampADC int FilterModelOrder= 8 8 1 12 // filter model order for pass band
Source:gUSBampADC int FilterType= 1 1 1 2 // filter type for pass band (1=BUTTERWORTH, 2=CHEBYSHEV)
Source:gUSBampADC int NotchEnabled= 1 1 0 1 // Enable notch (0=no, 1=yes)
Source:gUSBampADC float NotchHighPass= 58 58 0 70 // high pass filter for notch filter
Source:gUSBampADC float NotchLowPass= 62 62 0 4000 // low pass filter for notch filter
Source:gUSBampADC int NotchModelOrder= 4 4 1 10 // filter model order for notch filter
Source:gUSBampADC int NotchType= 1 1 1 2 // filter type for pass band (1=CHEBYSHEV, 2=BUTTERWORTH)
Source:gUSBampADC list DeviceIDs= 2 UA-2008.12.04 UA-2008.12.19 // list of USBamps to be used (or auto)
Source:gUSBampADC int DigitalInput= 0 0 0 1 // enable digital input:  0: false, 1: true (enumeration)
Source:gUSBampADC int DigitalOutput= 0 0 0 1 // enable digital output on block acquisition (boolean)
Source:gUSBampADC string DigitalOutputEx= % // expression for output on digital output 2 (expression)
Source:gUSBampADC int SignalType= 1 0 0 1 // numeric type of output signal:  0: int16, 1: float32 (enumeration)
Source:gUSBampADC int AcquisitionMode= 0 0 0 2 // data acquisition mode:  0: analog signal acquisition, 1: calibration, 2: impedance (enumeration)
Source:gUSBampADC int CommonGround= 1 0 0 1 // internally connect GNDs from all blocks:  0: false, 1: true (enumeration)
Source:gUSBampADC int CommonReference= 1 0 0 1 // internally connect Refs from all blocks:  0: false, 1: true (enumeration)
Storage:Documentation:BCI2000FileWriter string StorageTime= % // time of beginning of data storage
Source:Alignment:AlignmentFilter int AlignChannels= 1 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 5 1 2 3 4 5 // list of transmitted channels
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System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 gUSBampADC 1 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain
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Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Application%20Window:ApplicationWindow int WindowWidth= 1024 640 0 % // width of Application window
Application:Application%20Window:ApplicationWindow int WindowHeight= 780 480 0 % // height of Application window
Application:Application%20Window:ApplicationWindow int WindowLeft= 0 0 % % // screen coordinate of Application window's left edge
Application:Application%20Window:ApplicationWindow int WindowTop= 0 0 % % // screen coordinate of Application window's top edge
Application:Application%20Window:ApplicationWindow string WindowBackgroundColor= 0x000000 0x505050 % % // Application window background color (color)
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Visualize:Application%20Log:ApplicationBase int ShowAppLog= 1 0 0 1 // Show application log window (boolean)
Application:Sequencing:FeedbackTask float PreRunDuration= 2s 2s 0 % // duration of pause preceding first trial
Application:Sequencing:FeedbackTask float PreFeedbackDuration= 2s 2s 0 % // duration of target display prior to feedback
Application:Sequencing:FeedbackTask float FeedbackDuration= 3s 3s 0 % // duration of feedback
Application:Sequencing:FeedbackTask float PostFeedbackDuration= 1s 1s 0 % // duration of result display after feedback
Application:Sequencing:FeedbackTask float ITIDuration= 1s 1s 0 % // duration of inter-trial interval
Application:Sequencing:FeedbackTask float MinRunLength= 120s 120s 0 % // minimum duration of a run; if blank, NumberOfTrials is used
Application:Sequencing:FeedbackTask int NumberOfTrials= % 0 0 % // number of trials; if blank, MinRunLength is used
Application:Targets:FeedbackTask int NumberTargets= 2 2 0 255 // number of targets
Application:Targets:FeedbackTask intlist TargetSequence= 0 1 % % // fixed sequence in which targets should be presented (leave empty for random)
Application:Targets:DynamicFeedbackTask int TaskDifficulty= 5 // Difficulty is from to 1(hardest) to 5(easiest) 
Application:Targets:DynamicFeedbackTask matrix Targets= 5 { pos%20x pos%20y pos%20z width%20x width%20y width%20z } 50 82 50 12 12 8 50 18 50 12 12 8 50 90 50 8 8 8 50 10 50 8 8 8 0 0 4 8 8 8 // target positions and widths in percentage coordinates
Application:Targets:DynamicFeedbackTask int TargetColor= 0x0000FF // target color (color)
Application:Targets:DynamicFeedbackTask string TargetTexture= % // path of target texture (inputfile)
Application:Targets:DynamicFeedbackTask int TestAllTargets= 0 0 0 1 // test all targets for cursor collision? 0: test only the visible current target, 1: test all targets (enumeration)
Application:Cursor:DynamicFeedbackTask float CursorWidth= 5 10 0.0 % // feedback cursor width in percent of screen width
Application:Cursor:DynamicFeedbackTask int cPrimaryAxis= 2 // set primary axis for cursor movement: 1 for x,2 for y
Application:Cursor:DynamicFeedbackTask int CursorColorFront= 0xff0000 // cursor color when it is at the front of the workspace (color)
Application:Cursor:DynamicFeedbackTask int CursorColorBack= 0xFF0000 // cursor color when it is in the back of the workspace (color)
Application:Cursor:DynamicFeedbackTask string CursorTexture= % // path of cursor texture (inputfile)
Application:Cursor:DynamicFeedbackTask floatlist CursorPos= 3 50 50 50 // cursor starting position
Application:Window:DynamicFeedbackTask int RenderingQuality= 0 0 0 1 // rendering quality: 0: low, 1: high (enumeration)
Application:Sequencing:DynamicFeedbackTask float MaxFeedbackDuration= 3s % 0 % // abort a trial after this amount of feedback time has expired
Application:3DEnvironment:DynamicFeedbackTask floatlist CameraPos= 3 50 50 150 // camera position vector in percent coordinates of 3D area
Application:3DEnvironment:DynamicFeedbackTask floatlist CameraAim= 3 50 50 50 // camera aim point in percent coordinates
Application:3DEnvironment:DynamicFeedbackTask int CameraProjection= 0 0 0 2 // projection type: 0: flat, 1: wide angle perspective, 2: narrow angle perspective (enumeration)
Application:3DEnvironment:DynamicFeedbackTask floatlist LightSourcePos= 3 50 50 100 // light source position in percent coordinates
Application:3DEnvironment:DynamicFeedbackTask int LightSourceColor= 0x808080 // light source RGB color (color)
Application:3DEnvironment:DynamicFeedbackTask int WorkspaceBoundaryColor= 0xffffff 0 % % // workspace boundary color (0xff000000 for invisible) (color)
Application:3DEnvironment:DynamicFeedbackTask string WorkspaceBoundaryTexture= images/grid.bmp // path of workspace boundary texture (inputfile)
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeStateName= % // State to be translated into keystrokes, empty for off
Connector:ConnectorOutput string ConnectorOutputAddress= % localhost:20321 % % // one or more IP:Port combinations, e.g. localhost:20321
Application:Localization:Localization string Language= Default Default % % // Language for user messages
Application:Localization:Localization matrix LocalizedStrings= 0 1 // Localized user messages
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System:Configuration matrix ApplicationFilterChain= 4 { Filter%20Name Position%20String } ConnectorInput 2.9999 DynamicFeedbackTask 3 KeystrokeFilter 3.1 ConnectorOutput 3.9999 // Application filter chain
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