Storage:Session:DataIOFilter                  string    SubjectName=              PLAYBACK_           // subject alias
Storage:Session:DataIOFilter                  string    SubjectSession=                 001           // three-digit session number
Source:Playback                               string    PlaybackFileName=         $DATA/example/JH_S003R07.dat // $HOME/Desktop/JH_S003R07.dat
Source:Playback                               int       EnslavePython=                    1           // force BCPy2000 modules to follow states supplied by the source module without being able to change them (boolean)
PythonApp                                     int       ShowSignalTime=                   1
PythonSig:Epoch                               floatlist TriggerThreshold=         2     200     200   // 
Visualize:Timing:DataIOFilter                 int       VisualizeTiming=                  1           // visualize system timing (0=no, 1=yes) (boolean)
Visualize:Processing%20Stages                 int       VisualizeSpatialFilter=           0           // Visualize SpatialFilter output (boolean)
Visualize:Processing%20Stages                 int       VisualizePythonSigFilter=         1           // Visualize PythonSigFilter output (boolean)

PythonSig:Epoch float ERPClassifierBias= 0.047746 0.0 % % 
PythonSig:Epoch matrix ERPClassifierWeights= 72 300 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 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0 0 0 0 
