Source:Signal%20Properties:DataIOFilter int SourceCh= 73 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:DataIOFilter int SampleBlockSize= 20 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:DataIOFilter int SamplingRate= 500Hz 256Hz 1 % // sample rate
Source:Signal%20Properties:DataIOFilter list ChannelNames= 73 F7 F5 F3 F1 Fz F2 F4 F6 F8 FT7 FC5 FC3 FC1 FCz FC2 FC4 FC6 FT8 T7 C5 C3 C1 Cz C2 C4 C6 T8 TP7 CP5 CP3 CP1 CPz CP2 CP4 CP6 TP8 P7 P5 P3 P1 Pz P2 P4 P6 P8 P7P P3P PzP P4P P8P O9A O1 Oz O2 O10A O9 Iz O10 TP9 TP10 Fp1 Fpz Fp2 F7A F3A F4A F8A EU1 EO1 EL1 AUDL AUDR VMRK // list of channel names
Source:Signal%20Properties:DataIOFilter floatlist SourceChOffset= 73 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 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0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties:DataIOFilter floatlist SourceChGain= 73 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 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1 0.003 % % // gain for each channel (A/D units -> muV)
Storage:Data%20Location:DataIOFilter string DataDirectory= ..\data ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectName= test % % // subject alias
Storage:Session:DataIOFilter string SubjectSession= 001 001 % % // three-digit session number
Storage:Session:DataIOFilter string SubjectRun= 03 00 % % // two-digit run number
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Storage:Documentation:BCI2000FileWriter int SavePrmFile= 0 1 0 1 // save additional parameter file (0=no, 1=yes) (boolean)
Source:Alignment:AlignmentFilter int AlignChannels= 0 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 73 1 2 3 4 5 6 7 8 9 10 11 12 13 14 15 16 17 18 19 20 21 22 23 24 25 26 27 28 29 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70 71 72 73 // list of transmitted channels
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Filtering:SpatialFilter int SpatialFilterType= 2 2 0 3 // spatial filter type 0: none, 1: full matrix, 2: sparse matrix, 3: common average reference (CAR) (enumeration)
Filtering:SpatialFilter:SpatialFilter intlist SpatialFilterCAROutput= 0 // list of output channels for the CAR if used
Filtering:SpatialFilter:SpatialFilter matrix SpatialFilter= 207 { In Out Wt } F7 F7 1 F5 F5 1 F3 F3 1 F1 F1 1 Fz Fz 1 F2 F2 1 F4 F4 1 F6 F6 1 F8 F8 1 FT7 FT7 1 FC5 FC5 1 FC3 FC3 1 FC1 FC1 1 FCz FCz 1 FC2 FC2 1 FC4 FC4 1 FC6 FC6 1 FT8 FT8 1 T7 T7 1 C5 C5 1 C3 C3 1 C1 C1 1 Cz Cz 1 C2 C2 1 C4 C4 1 C6 C6 1 T8 T8 1 TP7 TP7 1 CP5 CP5 1 CP3 CP3 1 CP1 CP1 1 CPz CPz 1 CP2 CP2 1 CP4 CP4 1 CP6 CP6 1 TP8 TP8 1 P7 P7 1 P5 P5 1 P3 P3 1 P1 P1 1 Pz Pz 1 P2 P2 1 P4 P4 1 P6 P6 1 P8 P8 1 P7P P7P 1 P3P P3P 1 PzP PzP 1 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1 0 % % // columns represent input channels, rows represent output channels
Source:Signal%20Properties:DataIOFilter list ReferenceChannelName= 0 % % a // list of labels for reference channel or channels
Source:Signal%20Properties:DataIOFilter list GroundChannelName= 1 FzA % % a // label of the ground channel
Source:Playback int EnslavePython= 0 0 0 1 // force BCPy2000 modules to follow states supplied by the source module without being able to change them (boolean)
PythonSig string SignalProcessingDescription= binary%20classification%20of%20difference%20of%20L-R%20ERPs%20triggered%20by%20stereo%20AUX%20channels:%20parafarq2class%20(C=1e-006,maxrank=4,relcost=%5b1%201%5d,tol=0.0001)%20trained%20on%2040%20at%202009-07-28%2012:08:15,%20CV%20class_loss%20=%200.125 % a z // Identifies the signal processing module
PythonSig int CheckNumberOfEpochs= 1 1 0 1 // verify that the correct number of epochs has been trapped (boolean)
PythonSig:Epoch float EpochDurationMsec= 600 600 100 % 
PythonSig:Epoch floatlist EpochLowerBoundMsec= 2 200 200 100 0 % // after springing, each ERP trap will not spring again for this many milliseconds
PythonSig:Epoch list TriggerChannels= 2 AUDL AUDR 
PythonSig:Epoch floatlist TriggerThreshold= 2 100 100 % 0 % 
PythonSig:Epoch float TriggerHPCutoff= 0.0 0.0 0 % 
PythonSig:Epoch floatlist ERPFilterFreqHz= 2 0.1 8.0 % 0 % // lower and upper frequencies of bandpass filter for ERP feature set
PythonSig:Epoch int ERPFilterOrder= 6 8 0 % // order of bandpass filter for ERP feature set
PythonSig:Epoch float ERPClassifierBias= -0.30037 0.0 % % 
PythonSig:Epoch matrix ERPClassifierWeights= 72 300 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 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0 0 0 0 
PythonSig:Epoch int DiffFeatureSets= 1 1 0 1 // for 2-stream designs, whether to use the difference between the two feature sets (boolean)
PythonSig:Epoch intlist DiscardEpochs= 2 2 2 2 0 % // for classification, discard this many epochs at the beginning
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PythonApp string ApplicationDescription= pulses % a z // Identifies the stimulus presentation module
PythonApp int ShowSignalTime= 0 0 0 1 // show a timestamp based on the number of processed samples (boolean)
PythonApp:Design int TrialsPerBlock= 20 20 1 % // number of trials in one block
PythonApp:Design int BlocksPerRun= 1 20 1 % // number of sub-blocks in one run
PythonApp float SystemMasterVolume= 0.3 1.0 0 1 // operating-system volume setting
PythonApp int HeadPhones= 1 0 0 1 // use headphones or not? (boolean)
PythonApp:Task int FreeChoice= 0 0 0 1 // allow user to choose freely (boolean)
PythonApp:Task int PerceptualOnly= 0 0 0 1 // if checked, mute non-target streams (boolean)
PythonApp int SurroundSoundTrigger= 1 0 0 1 // if checked, deliver the trigger signal in sound channels 3 and 4 (boolean)
PythonApp int LowerStimulusThreadPriority= 0 0 0 1 // if checked, try to lower the priority of the stimulus factory thread (boolean)
PythonApp:Streams int NumberOfStreams= 2 2 2 % // number of streams
PythonApp:Streams float MinPropTargets= 0.1 0.1 0 1 // minimum number of targets, as a proportion of the largest number of variable beats among streams
PythonApp:Streams float MaxPropTargets= 0.8 0.8 0 1 // maximum number of targets, as a proportion of the smallest number of variable beats among streams
PythonApp:Streams floatlist PeriodMsec= 2 504 546 500 0 % // period of stimuli for each stream in msec
PythonApp:Streams floatlist OffsetMsec= 2 504 598 0 0 % // offset of each stimulus stream in msec
PythonApp:Streams floatlist InitialStandards= 2 3 3 3 0 % // how many stimuli at the beginning of each stream are guaranteed to be standards
PythonApp:Streams intlist NumberOfDeviants= 2 0 0 0 0 1 // number of deviants in each stream
PythonApp:Streams int RoundPeriods= 2 0 0 2 // stream period rounding: 0 no rounding, 1 adjust to an integer number of carrier cycles, 2 adjust to an integer number of modulation cycles (enumeration)
PythonApp:Streams int RoundModFreq= 2 0 0 2 // modulation frequency rounding: 0 no rounding, 1 integer number of cycles per beat, 2 integer number of EEG samples per modulation cycle (enumeration)
PythonApp:Streams int RoundCarrierFreq= 2 0 0 2 // carrier frequency rounding: 0 no rounding, 1 integer number of cycles per beat, 2 integer number of cycles per modulation cycle (enumeration)
PythonApp:Streams int RoundOffsets= 2 0 0 2 // stream SOA rounding: 0 no rounding, 1 adjust to an integer number of carrier cycles, 2 adjust to an integer number of modulation cycles (enumeration)
PythonApp:Streams int RoundDurations= 0 0 0 2 // pulse duration rounding: 0 no rounding, 1 adjust to an integer number of carrier cycles, 2 adjust to an integer number of modulation cycles (enumeration)
PythonApp:Streams matrix Amplitude= { Background Standard Target Deviant } 2 0.3 0.3 1.0 1.0 1.0 1.0 0.3 0.3 1.0 0.0 1.0 // amplitude of each stimulus (types by streams)
PythonApp:Streams matrix DurationMsec= { Background Standard Target Deviant } 2 5000.0 5000.0 100.0 100.0 180.0 180.0 100.0 100.0 50.0 0.0 % // duration of each stimulus pulse (types by streams)
PythonApp:Streams matrix AttackMsec= { Background Standard Target Deviant } 2 250.0 250.0 5.0 5.0 5.0 5.0 5.0 5.0 5.0 0.0 % // rise time of each stimulus pulse (types by streams)
PythonApp:Streams matrix DecayMsec= { Background Standard Target Deviant } 2 100.0 100.0 50.0 50.0 50.0 50.0 50.0 50.0 5.0 0.0 % // fall time of each stimulus pulse (types by streams)
PythonApp:Streams matrix CarrierType= { Background Standard Target Deviant } 2 sawtooth sawtooth sawtooth sawtooth sawtooth sawtooth sawtooth sawtooth square % % // (types by streams)
PythonApp:Streams matrix CarrierFreqHz= { Background Standard Target Deviant } 2 500.0 769.231 500.0 769.231 500.0 769.231 500.0 769.231 800.0 0.0 % // (types by streams)
PythonApp:Streams matrix ModulationType= { Background Standard Target Deviant } 2 sine sine sine sine sine sine sine sine sine % % // (types by streams)
PythonApp:Streams matrix ModulationFreqHz= { Background Standard Target Deviant } 2 41.66667 38.462 41.66667 38.462 41.66667 38.462 41.66667 38.462 45.0 % % // (types by streams)
PythonApp:Streams matrix ModulationDepth= { Background Standard Target Deviant } 2 0.9 0.9 0.9 0.9 0.9 0.9 0.9 0.9 0.0 0.0 1.0 // (types by streams)
PythonApp:Streams matrix AudioMixingMatrix= 2 2 1.0 0.0 0.0 1.0 1.0 % % // audio mixing matrix (outputs by inputs)
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