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Source:Signal%20Properties:DataIOFilter int SourceCh= 16 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:DataIOFilter int SampleBlockSize= 8 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:DataIOFilter int SamplingRate= 256 256Hz 1 % // sample rate
Source:Signal%20Properties:DataIOFilter list ChannelNames= 0 // list of channel names
Source:Signal%20Properties:DataIOFilter floatlist SourceChOffset= 16 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties:DataIOFilter floatlist SourceChGain= 16 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.033 0.003 % % // gain for each channel (A/D units -> muV)
Storage:Data%20Location:DataIOFilter string DataDirectory= ..\data ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectSession= 001 001 % % // three-digit session number
Storage:Session:DataIOFilter string SubjectRun= 01 00 % % // two-digit run number
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
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Source:SignalGeneratorADC int ModulateAmplitude= 0 0 0 1 // Modulate the amplitude with the mouse (0=no, 1=yes) (boolean)
Source:SignalGeneratorADC int SineChannelX= 0 0 0 % // Channel number of sinewave controlled by mouse x position
Source:SignalGeneratorADC int SineChannelY= 0 0 0 % // Channel number of sinewave controlled by mouse y position (0 for all)
Source:SignalGeneratorADC int SineChannelZ= 0 0 0 % // Channel number of sinewave controlled by mouse key state
Source:SignalGeneratorADC float SineFrequency= 10Hz 10Hz % % // Frequency of sine wave
Source:SignalGeneratorADC int SineAmplitude= 100muV 100muV % % // Amplitude of sine wave
Source:SignalGeneratorADC int NoiseAmplitude= 30muV 30muV % % // Amplitude of white noise (common to all channels)
Source:SignalGeneratorADC int DCOffset= 0muV 0muV % % // DC offset (common to all channels)
Source:SignalGeneratorADC string OffsetMultiplier= % StimulusType % % // Expression to multiply offset by
Source:SignalGeneratorADC int RandomSeed= 0 0 0 1 // Initialization value for random number generator (initialize from time if 0)
Source:SignalGeneratorADC int SignalType= 0 0 0 2 // numeric type of output signal:  0: int16, 1: float32, 2: int32 (enumeration)
Storage:Documentation:BCI2000FileWriter int SavePrmFile= 0 1 0 1 // save additional parameter file (0=no, 1=yes) (boolean)
Storage:Documentation:BCI2000FileWriter string StorageTime= Wed%20Feb%2025%2012:06:32%202009 // time of beginning of data storage
Source:Alignment:AlignmentFilter int AlignChannels= 1 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 8 2 6 11 12 13 14 15 16 // list of transmitted channels
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System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 SignalGeneratorADC 1 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain
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Filtering:SpatialFilter int SpatialFilterType= 1 2 0 3 // spatial filter type 0: none, 1: full matrix, 2: sparse matrix, 3: common average reference (CAR) (enumeration)
Filtering:SpatialFilter:SpatialFilter intlist SpatialFilterCAROutput= 0 // list of output channels for the CAR if used
Filtering:SpatialFilter:SpatialFilter matrix SpatialFilter= 8 8 1 0 0 0 0 0 0 0 0 1 0 0 0 0 0 0 0 0 1 0 0 0 0 0 0 0 0 1 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1 0 % % // columns represent input channels, rows represent output channels
Filtering:P3TemporalFilter int EpochLength= 800ms 500ms 0 % // Length of data epoch from stimulus onset
Filtering:P3TemporalFilter int EpochsToAverage= 1 1 0 % // Number of epochs to average
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Visualize:P3TemporalFilter int TargetERPChannel= 4 1 0 128 // Input channel for which to display ERP data
Filtering:LinearClassifier matrix Classifier= 780 { input%20channel input%20element%20(bin) output%20channel 4 } 1 1 1 -0.61086 1 2 1 -0.61086 1 3 1 -0.61086 1 4 1 -0.61086 1 5 1 -0.61086 1 6 1 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8 169 1 1.5485 // Linear classification matrix in sparse representation
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System:Configuration matrix SignalProcessingFilterChain= 3 { Filter%20Name Position%20String } SpatialFilter 2.A P3TemporalFilter 2.B LinearClassifier 2.C // SignalProcessing filter chain
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Storage:Session:P3SpellerTask string SubjectName= test Name % % // subject alias
Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
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Application:Window:ApplicationBase int WindowWidth= 800 640 0 % // width of application window
Application:Window:ApplicationBase int WindowHeight= 750 480 0 % // height of application window
Application:Window:ApplicationBase int WindowLeft= 2150 0 % % // screen coordinate of application window's left edge
Application:Window:ApplicationBase int WindowTop= 100 0 % % // screen coordinate of application window's top edge
Application:Window:StimulusTask string WindowBackgroundColor= 0x000000 0x505050 % % // background color (color)
Application:Window:StimulusTask int AllowExt= 1 0 0 1 // Allow External Devices for Presentation (0=no, 1=yes) (boolean)
Application:Sequencing:StimulusTask float PreRunDuration= 2s 0 0 % // pause preceding first sequence
Application:Sequencing:StimulusTask float PostRunDuration= 2s 0 0 % // pause following last sequence
Application:Sequencing:StimulusTask float PreSequenceDuration= 0.5s 2s 0 % // pause preceding sequences/sets of intensifications
Application:Sequencing:StimulusTask float PostSequenceDuration= 3.5s 2s 0 % // pause following sequences/sets of intensifications
Application:Sequencing:StimulusTask float StimulusDuration= 3 40ms 0 % // stimulus duration
Application:Sequencing:StimulusTask float ISIMinDuration= 3 80ms 0 % // minimum duration of inter-stimulus interval
Application:Sequencing:StimulusTask float ISIMaxDuration= 3 80ms 0 % // maximum duration of inter-stimulus interval
Application:Result%20Processing:StimulusTask int InterpretMode= 1 0 0 2 // interpretation of results: 0 none, 1 online free mode, 2 copy mode (enumeration)
Application:Result%20Processing:StimulusTask int DisplayResults= 1 1 0 1 // display results of copy/free spelling (boolean)
Application:Checkerboard:P3SpellerTask int Standard= 1 0 0 1 // Standard Row-Column Mode (0=no, 1=yes) (boolean)
Application:Checkerboard:P3SpellerTask int Rainbow= 0 0 0 1 // Rainbow Mode (0=no, 1=yes) (boolean)
Application:Checkerboard:P3SpellerTask matrix RainbowColors= 7 { Color } 0x00FF0000 0x00FFA500 0x00FFFF00 0x00408040 0x002020FF 0x00A020F0 0x00C0C0C0 // speller target properties
Application:Checkerboard:P3SpellerTask int ExtraHalf= 0 0 0 1 // Present an Extra Half Set (0=no, 1=yes) (boolean)
Application:Checkerboard:P3SpellerTask int ReadStimuli= 0 0 0 1 // Read Stimulus Set from file (0=no, 1=yes) (boolean)
Application:Checkerboard:P3SpellerTask string StimulusFile= % // Name of File containing Stimulus Set
Application:Checkerboard:P3SpellerTask int ExtApp= 1 0 0 1 // Use external UDP presentation application (0=no, 1=yes) (boolean)
Application:Checkerboard:P3SpellerTask string UDPHost= localhost:12000 // Host:Port of external presentation application
Application:Checkerboard:P3SpellerTask int ExtDev= 0 0 0 1 // Use External Serial Presentation Device (0=no, 1=yes) (boolean)
Application:Checkerboard:P3SpellerTask string SerialDev= % // COMx: Serial Port Connected to External Device
Application:Checkerboard:P3SpellerTask int AutoFlash= 10 10 0 % // Number of milliseconds for Autoflash
Application:Checkerboard:P3SpellerTask int SetsPerSequence= 1 10 1 % // Number of Sets of Stimuli Per Sequence
Application:Checkerboard:P3SpellerTask int NumInCycle= 100 100 10 % // Number of Sequences to Cycle Through
Application:Checkerboard:P3SpellerTask float Confidence= 0.0 5.0 0.0 % // Confidence in number of stdev's from mean
Application:Checkerboard:P3SpellerTask int MaxTries= 1 100 1 % // Maximum tries before resetting confidence level
Application:Sequencing:P3SpellerTask int NumberOfSequences= 1 15 1 % // number of sequences in a set of intensifications
Application:Speller%20Targets:P3SpellerTask matrix TargetDefinitions= 36 5 1 1 1 % % 2 2 1 % % 3 3 1 % % 4 4 1 % % 5 5 1 % % 6 6 1 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36 1 % % // speller target properties
Application:Speller%20Targets:P3SpellerTask intlist NumMatrixColumns= 1 6 6 1 % // display matrices' column number(s)
Application:Speller%20Targets:P3SpellerTask intlist NumMatrixRows= 1 6 6 0 % // display matrices' row number(s)
Application:Audio%20Stimuli:P3SpellerTask int AudioStimuliOn= 0 0 0 1 // Audio Stimuli Mode (0=no, 1=yes) (boolean)
Application:Audio%20Stimuli:P3SpellerTask matrix AudioStimuliRowsFiles= 6 { filename } ./voice/1.wav ./voice/2.wav ./voice/3.wav ./voice/4.wav ./voice/5.wav ./voice/6.wav // audio stimuli rows files 
Application:Audio%20Stimuli:P3SpellerTask matrix AudioStimuliColsFiles= 6 { filename } ./voice/a.wav ./voice/b.wav ./voice/c.wav ./prog/voice/d.wav ./prog/voice/e.wav ./prog/voice/f.wav // audio stimuli column files 
Application:Speller%20Targets:P3SpellerTask floatlist TargetWidth= 1 16 0 0 100 // target width in percent of screen width
Application:Speller%20Targets:P3SpellerTask floatlist TargetHeight= 1 14 0 0 100 // target height in percent of screen height
Application:Speller%20Targets:P3SpellerTask floatlist TargetTextHeight= 1 6 0 0 100 // height of target labels in percent of screen height
Application:Speller%20Targets:P3SpellerTask stringlist BackgroundColor= 1 0x00000000 0x505050 % % // target background color (color)
Application:Speller%20Targets:P3SpellerTask stringlist TextColor= 1 0x00555555 0x505050 % % // text color (color)
Application:Speller%20Targets:P3SpellerTask stringlist TextColorIntensified= 1 0x00FFFFFF 0x505050 % % // intensified text color (color)
Application:Speller%20Targets:P3SpellerTask intlist IconHighlightMode= 1 1 1 0 2 // icon highlight method 0: Show/Hide, 1: Intensify, 2: Grayscale, 3: Invert, 4: Dim    (enumeration)
Application:Speller%20Targets:P3SpellerTask floatlist IconHighlightFactor= 1 0.5 0.5 0 % // scale factor for highlighted icon pixel values
Application:Speller:P3SpellerTask int FirstActiveMenu= 1 1 1 % // Index of first active menu
Application:Speller:P3SpellerTask float StatusBarSize= 10 0 0 100 // size of status bar in percent of screen height
Application:Speller:P3SpellerTask float StatusBarTextHeight= 5 0 0 100 // size of status bar text in percent of screen height
Application:Speller:P3SpellerTask string TextToSpell= % // character or string to spell in offline copy mode
Application:Speller:P3SpellerTask string TextResult= 3212302319292124 // user spelling result
Application:Speller:P3SpellerTask int TestMode= 1 0 0 1 // select targets by clicking on their associated stimuli (0=no, 1=yes) (boolean)
Application:Speller:P3SpellerTask string DestinationAddress= localhost:19711 // network address for speller output in IP:port format
Application:Text%20Window:P3SpellerTask int TextWindowEnabled= 0 0 0 1 // Show Text Window (0=no, 1=yes) (boolean)
Application:Text%20Window:P3SpellerTask int TextWindowLeft= 640 0 0 % // Text Window X location
Application:Text%20Window:P3SpellerTask int TextWindowTop= 0 0 0 % // Text Window Y location
Application:Text%20Window:P3SpellerTask int TextWindowWidth= 512 512 0 % // Text Window Width
Application:Text%20Window:P3SpellerTask int TextWindowHeight= 512 512 0 % // Text Window Height
Application:Text%20Window:P3SpellerTask string TextWindowFontName= Courier // Text Window Font Name
Application:Text%20Window:P3SpellerTask int TextWindowFontSize= 10 4 1 % // Text Window Font Size
Application:Text%20Window:P3SpellerTask string TextWindowFilePath= % // Path for Saved Text File (directory)
Connector:ConnectorOutput string ConnectorOutputAddress= % localhost:20320 % % // IP address/port to write to, e.g. localhost:20320
Application:Localization:Localization string Language= Default Default % % // Language for user messages
Application:Localization:Localization matrix LocalizedStrings= { German } { TIME%20OUT%20!!! Waiting%20to%20start%20... } Zeit%20abgelaufen! Warte%20... // Localized user messages
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System:Configuration matrix ApplicationFilterChain= 3 { Filter%20Name Position%20String } ConnectorInput 2.9999 P3SpellerTask 3 ConnectorOutput 3.9999 // Application filter chain
