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Filtering:SpatialFilter int SpatialFilterType= 2 2 0 3 // spatial filter type 0: none, 1: full matrix, 2: sparse matrix, 3: common average reference (CAR) (enumeration)
Filtering:SpatialFilter:SpatialFilter matrix SpatialFilter= 308 { input output weight } FC5 FC5 1 F5 FC5 -1/30/(1/30+1/30+1/30+1/30) FC3 FC5 -1/30/(1/30+1/30+1/30+1/30) C5 FC5 -1/30/(1/30+1/30+1/30+1/30) FT7 FC5 -1/30/(1/30+1/30+1/30+1/30) FC3 FC3 1 F3 FC3 -1/30/(1/30+1/30+1/30+1/30) FC1 FC3 -1/30/(1/30+1/30+1/30+1/30) C3 FC3 -1/30/(1/30+1/30+1/30+1/30) FC5 FC3 -1/30/(1/30+1/30+1/30+1/30) FC1 FC1 1 F1 FC1 -1/30/(1/30+1/30+1/35+1/30) FCz FC1 -1/30/(1/30+1/30+1/35+1/30) C1 FC1 -1/35/(1/30+1/30+1/35+1/30) FC3 FC1 -1/30/(1/30+1/30+1/35+1/30) FCz FCz 1 Fz FCz -1/30/(1/30+1/30+1/30+1/30) FC2 FCz -1/30/(1/30+1/30+1/30+1/30) Cz FCz -1/30/(1/30+1/30+1/30+1/30) FC1 FCz -1/30/(1/30+1/30+1/30+1/30) FC2 FC2 1 F2 FC2 -1/30/(1/30+1/30+1/35+1/30) FC4 FC2 -1/30/(1/30+1/30+1/35+1/30) C2 FC2 -1/35/(1/30+1/30+1/35+1/30) FCz FC2 -1/30/(1/30+1/30+1/35+1/30) FC4 FC4 1 F4 FC4 -1/30/(1/30+1/30+1/30+1/30) FC6 FC4 -1/30/(1/30+1/30+1/30+1/30) C4 FC4 -1/30/(1/30+1/30+1/30+1/30) FC2 FC4 -1/30/(1/30+1/30+1/30+1/30) FC6 FC6 1 F6 FC6 -1/30/(1/30+1/30+1/30+1/30) FT8 FC6 -1/30/(1/30+1/30+1/30+1/30) C6 FC6 -1/30/(1/30+1/30+1/30+1/30) FC4 FC6 -1/30/(1/30+1/30+1/30+1/30) C5 C5 1 FC5 C5 -1/30/(1/30+1/30+1/30+1/30) C3 C5 -1/30/(1/30+1/30+1/30+1/30) CP5 C5 -1/30/(1/30+1/30+1/30+1/30) T7 C5 -1/30/(1/30+1/30+1/30+1/30) C3 C3 1 FC3 C3 -1/30/(1/30+1/30+1/30+1/30) C1 C3 -1/30/(1/30+1/30+1/30+1/30) CP3 C3 -1/30/(1/30+1/30+1/30+1/30) C5 C3 -1/30/(1/30+1/30+1/30+1/30) C1 C1 1 FC1 C1 -1/35/(1/35+1/30+1/35+1/30) Cz C1 -1/30/(1/35+1/30+1/35+1/30) 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-1/39/(1/39+1/30+1/39) 0 % % // columns represent input channels, rows represent output channels
Filtering:SpatialFilter:SpatialFilter intlist SpatialFilterCAROutput= 0 // when using CAR filter type: list of output channels, or empty for all channels
Filtering:SpatialFilter:SpatialFilter int SpatialFilterMissingChannels= 0 0 0 1 // how to handle missing channels 0: ignore, 1: report error (enumeration)
Filtering:ARFilter int WindowLength= 0.5s 0.5s % % // Time window for spectrum computation
Filtering:ARFilter int Detrend= 0 0 0 2 // Detrend data? 0: no, 1: mean, 2: linear (enumeration)
Filtering:ARFilter int ModelOrder= 16 16 0 % // AR model order
Filtering:ARFilter int OutputType= 0 0 0 2 // 0: Spectral Amplitude, 1: Spectral Power, 2: AR Coefficients (enumeration)
Filtering:ARFilter float FirstBinCenter= 0Hz 0Hz % % // Center of first frequency bin (in Hz)
Filtering:ARFilter float LastBinCenter= 30Hz 30Hz % % // Center of last frequency bin (in Hz)
Filtering:ARFilter float BinWidth= 3Hz 3Hz % % // Width of spectral bins (in Hz)
Filtering:ARFilter int EvaluationsPerBin= 15 15 1 % // Number of uniformly spaced evaluation points entering into a single bin value
Statistics:StatisticsFilter matrix ChannelSets= { AllChannels } 1 : // Rows represent channel sets, defined as space-separated lists of channel names.  Use row labels to name channel sets. Channel names may include * and ? wildcards,  and character ranges enclosed in [], optionally negated by an exclamation mark.  Ranges of channels may be specified using : or - to separate begin from end.
Statistics:StatisticsFilter matrix Observers= { Target1 Target2 Baseline Continuous Mouse } { Observe%20what Observe%20when Observe%20over Observe%20weighted%20(boolean) Reset%20when } AllChannels TargetCode==1 30s % % AllChannels TargetCode==2 30s % % AllChannels TargetCode==0 30s % % TargetCode%20MousePosY%20AllChannels true 30s % % TargetCode%20MousePosY true 30s % % // Rows represent observers. In the first column, you may specify channel sets, views, or expressions.  Specify multiple entries in the first column in order to do multivariate statistics.
Statistics:StatisticsFilter matrix Views= { Target1%20Baseline Target2%20Baseline Target1%20Target2 TargetCode%20Determination Mouse%20Determination TargetCode%20Mouse%20Correlation } { Output1 } RSquared(Target1,Baseline) RSquared(Target2,Baseline) RSquared(Target1,Target2) Continuous.Correlation(1,3)^2 Continuous.Correlation(2,3)^2 Mouse.Correlation() // Rows represent views. Views are defined by arithmetic expressions that may contain  statistical functions, and properties of observers. Data from multiple  columns will be concatenated in the output.
Statistics:StatisticsFilter string OutputView= % // Specify a view to be copied into the filter's output signal. When empty,  the filter's input will be used as an output.
Statistics:StatisticsFilter stringlist VisualizeViews= 1 * // Wildcard expressions matching views to be displayed. Enter a "*" to display all views
Statistics:StatisticsFilter matrix EventScripts= { OnStartRun OnStopRun OnInitialize OnProcess } 1 Count:=0; % % Count:=Count+1; // Specify statements to be executed during StartRun, StopRun, Initialize, or Process.
Filtering:LinearClassifier matrix Classifier= 2 { input%20channel input%20element%20(bin) output%20channel weight } 1 4 1 1 C3 9Hz 2 1 // Linear classification matrix in sparse representation
Filtering:LPFilter float LPTimeConstant= 0 16s 0 % // time constant for the low pass filter
Filtering:ExpressionFilter string StartRunExpression= % // expression executed on StartRun
Filtering:ExpressionFilter string StopRunExpression= % // expression executed on StopRun
Filtering:ExpressionFilter matrix Expressions= 0 1 // expressions used to compute the output of the ExpressionFilter (rows are channels; empty matrix for none)
Filtering:Normalizer floatlist NormalizerOffsets= 3 0 65.3365 0 0 % % // normalizer offsets
Filtering:Normalizer floatlist NormalizerGains= 3 0 0.0548007 0 0 % % // normalizer gain values
Filtering:Normalizer intlist Adaptation= 3 0 2 0 0 0 2 // 0: no adaptation, 1: zero mean, 2: zero mean, unit variance (enumeration)
Filtering:Normalizer matrix BufferConditions= 2 2 % (Feedback)&&(TargetCode==1) % (Feedback)&&(TargetCode==2) // expressions corresponding to data buffers (columns correspond to output channels, multiple rows correspond to multiple buffers)
Filtering:Normalizer float BufferLength= 4s 9s % % // time window of past data per buffer that enters into statistic
Filtering:Normalizer string UpdateTrigger= (Feedback==0) // expression to trigger offset/gain update when changing from 0 (use empty string for continuous update)
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System:Configuration matrix SignalProcessingFilterChain= 7 { Filter%20Name Position%20String } SpatialFilter 2.B ARFilter 2.C StatisticsFilter 2.C1 LinearClassifier 2.D LPFilter 2.D1 ExpressionFilter 2.D2 Normalizer 2.E // SignalProcessing filter chain
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Source:Signal%20Properties:DataIOFilter int SourceCh= 64 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:DataIOFilter int SampleBlockSize= 8 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:DataIOFilter int SamplingRate= 256 256Hz 1 % // sample rate
Source:Signal%20Properties:DataIOFilter list ChannelNames= 64 FC5 FC3 FC1 FCz FC2 FC4 FC6 C5 C3 C1 Cz C2 C4 C6 CP5 CP3 CP1 CPz CP2 CP4 CP6 Fp1 Fpz Fp2 AF7 AF3 AFz AF4 AF8 F7 F5 F3 F1 Fz F2 F4 F6 F8 FT7 FT8 T7 T8 T9 T10 TP7 TP8 P7 P5 P3 P1 Pz P2 P4 P6 P8 PO7 PO3 POz PO4 PO8 O1 Oz O2 Iz // list of channel names
Source:Signal%20Properties:DataIOFilter floatlist SourceChOffset= 64 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 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0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties:DataIOFilter floatlist SourceChGain= 64 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 0.008 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0.008 0.003 % % // gain for each channel (A/D units -> muV)
Storage:Data%20Location:DataIOFilter string DataDirectory= ..\data ..\data % % // path to top level data directory (directory)
Storage:Session:DataIOFilter string SubjectName= test Name % % // subject alias
Storage:Session:DataIOFilter string SubjectSession= 001 001 % % // three-digit session number
Storage:Session:DataIOFilter string SubjectRun= 01 00 % % // two-digit run number
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
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Source:SignalGeneratorADC int ModulateAmplitude= 1 0 0 1 // Modulate the amplitude with the mouse (0=no, 1=yes) (boolean)
Source:SignalGeneratorADC int SineChannelX= 1 0 0 % // Channel number of sinewave controlled by mouse x position
Source:SignalGeneratorADC int SineChannelY= 2 0 0 % // Channel number of sinewave controlled by mouse y position (0 for all)
Source:SignalGeneratorADC int SineChannelZ= 0 0 0 % // Channel number of sinewave controlled by mouse key state
Source:SignalGeneratorADC float SineFrequency= 9Hz 10Hz % % // Frequency of sine wave
Source:SignalGeneratorADC int SineAmplitude= 100muV 100muV % % // Amplitude of sine wave
Source:SignalGeneratorADC int NoiseAmplitude= 100muV 30muV % % // Amplitude of white noise (common to all channels)
Source:SignalGeneratorADC int DCOffset= 0 0muV % % // DC offset (common to all channels)
Source:SignalGeneratorADC string OffsetMultiplier= % StimulusType % % // Expression to multiply offset by
Source:SignalGeneratorADC int RandomSeed= 0 0 % % // Initialization value for random number generator (initialize from time if 0)
Source:SignalGeneratorADC int SignalType= 0 0 0 2 // numeric type of output signal:  0: int16, 1: float32, 2: int32 (enumeration)
Storage:Documentation:BCI2000FileWriter string StorageTime= % // time of beginning of data storage
Source:Alignment:AlignmentFilter int AlignChannels= 0 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 64 FC5 FC3 FC1 FCz FC2 FC4 FC6 C5 C3 C1 Cz C2 C4 C6 CP5 CP3 CP1 CPz CP2 CP4 CP6 Fp1 Fpz Fp2 AF7 AF3 AFz AF4 AF8 F7 F5 F3 F1 Fz F2 F4 F6 F8 FT7 FT8 T7 T8 T9 T10 TP7 TP8 P7 P5 P3 P1 Pz P2 P4 P6 P8 PO7 PO3 POz PO4 PO8 O1 Oz O2 Iz // list of transmitted channels
Source:Log%20Input:KeyLogger int LogMouse= 1 0 0 1 // record mouse to states (boolean)
System:Command%20Line%20Arguments variant EvaluateTiming= 0 0 0 0 
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System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 SignalGeneratorADC 1 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain
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Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Application%20Window:ApplicationWindow int WindowWidth= 640 640 0 % // width of Application window
Application:Application%20Window:ApplicationWindow int WindowHeight= 480 480 0 % // height of Application window
Application:Application%20Window:ApplicationWindow int WindowLeft= 0 0 % % // screen coordinate of Application window's left edge
Application:Application%20Window:ApplicationWindow int WindowTop= 0 0 % % // screen coordinate of Application window's top edge
Application:Application%20Window:ApplicationWindow string WindowBackgroundColor= 0x000000 0x505050 % % // Application window background color (color)
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Application:Sequencing:FeedbackTask float PreRunDuration= 2s 2s 0 % // duration of pause preceding first trial
Application:Sequencing:FeedbackTask float PreFeedbackDuration= 2s 2s 0 % // duration of target display prior to feedback
Application:Sequencing:FeedbackTask float FeedbackDuration= 2s 3s 0 % // duration of feedback
Application:Sequencing:FeedbackTask float PostFeedbackDuration= 1s 1s 0 % // duration of result display after feedback
Application:Sequencing:FeedbackTask float ITIDuration= 1s 1s 0 % // duration of inter-trial interval
Application:Sequencing:FeedbackTask float MinRunLength= 120s 120s 0 % // minimum duration of a run; if blank, NumberOfTrials is used
Application:Sequencing:FeedbackTask int NumberOfTrials= % 0 0 % // number of trials; if blank, MinRunLength is used
Application:Targets:FeedbackTask int NumberTargets= 2 2 0 255 // number of targets
Application:Targets:FeedbackTask intlist TargetSequence= 0 1 % % // fixed sequence in which targets should be presented (leave empty for random)
Application:Window:CursorFeedbackTask int RenderingQuality= 1 0 0 1 // rendering quality: 0: low, 1: high (enumeration)
Application:Sequencing:CursorFeedbackTask float MaxFeedbackDuration= 4s % 0 % // abort a trial after this amount of feedback time has expired
Application:3DEnvironment:CursorFeedbackTask floatlist CameraPos= 3 50 50 150 // camera position vector in percent coordinates of 3D area
Application:3DEnvironment:CursorFeedbackTask floatlist CameraAim= 3 50 50 50 // camera aim point in percent coordinates
Application:3DEnvironment:CursorFeedbackTask int CameraProjection= 0 0 0 2 // projection type: 0: flat, 1: wide angle perspective, 2: narrow angle perspective (enumeration)
Application:3DEnvironment:CursorFeedbackTask floatlist LightSourcePos= 3 50 50 150 // light source position in percent coordinates
Application:3DEnvironment:CursorFeedbackTask int LightSourceColor= 0xffffff // light source RGB color (color)
Application:3DEnvironment:CursorFeedbackTask int WorkspaceBoundaryColor= 0xffff00 0 % % // workspace boundary color (0xff000000 for invisible) (color)
Application:3DEnvironment:CursorFeedbackTask string WorkspaceBoundaryTexture= images\grid.bmp // path of workspace boundary texture (inputfile)
Application:Cursor:CursorFeedbackTask float CursorWidth= 10 10 0.0 % // feedback cursor width in percent of screen width
Application:Cursor:CursorFeedbackTask int CursorColorFront= 0xff0000 // cursor color when it is at the front of the workspace (color)
Application:Cursor:CursorFeedbackTask int CursorColorBack= 0xff0000 // cursor color when it is in the back of the workspace (color)
Application:Cursor:CursorFeedbackTask string CursorTexture= % // path of cursor texture (inputfile)
Application:Cursor:CursorFeedbackTask floatlist CursorPos= 3 50 50 50 // cursor starting position
Application:Targets:CursorFeedbackTask matrix Targets= 2 { pos%20x pos%20y pos%20z width%20x width%20y width%20z } 50 96 50 50 8 8 50 4 50 50 8 8 // target positions and widths in percentage coordinates
Application:Targets:CursorFeedbackTask int TargetColor= 0xff0000 // target color (color)
Application:Targets:CursorFeedbackTask string TargetTexture= % // path of target texture (inputfile)
Application:Targets:CursorFeedbackTask int TestAllTargets= 1 0 0 1 // test all targets for cursor collision? 0: test only the visible current target, 1: test all targets (enumeration)
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeStateName= % // State to be translated into keystrokes, empty for off
Connector:ConnectorOutput string ConnectorOutputAddress= % localhost:20320 % % // IP address/port to write to, e.g. localhost:20320
Application:Localization:Localization string Language= Default Default % % // Language for user messages
Application:Localization:Localization matrix LocalizedStrings= { German } { Timeout Be%20prepared%20... T } Inaktiv Achtung%20... T // Localized user messages
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System:Configuration matrix ApplicationFilterChain= 4 { Filter%20Name Position%20String } ConnectorInput 2.9999 CursorFeedbackTask 3 KeystrokeFilter 3.1 ConnectorOutput 3.9999 // Application filter chain
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