Application:Window string WindowBackgroundColor= 0x000000 0x505050 % % // background color (color)
Application:Sequencing float PreRunDuration= 1 0 0 % // pause preceding first sequence
Application:Sequencing float PostRunDuration= 1 0 0 % // pause following last sequence
Application:Sequencing float PreSequenceDuration= 1s 2s 0 % // pause preceding sequences/sets of intensifications
Application:Sequencing float PostSequenceDuration= 1s 2s 0 % // pause following sequences/sets of intensifications
Application:Sequencing float StimulusDuration= 105ms 40ms 0 % // stimulus duration
Application:Sequencing float ISIMinDuration= 105ms 80ms 0 % // minimum duration of inter-stimulus interval
Application:Sequencing float ISIMaxDuration= 105ms 80ms 0 % // maximum duration of inter-stimulus interval
Application:Result%20Processing int InterpretMode= 2 0 0 2 // interpretation of results: 0 none, 1 online free mode, 2 offline copy mode (enumeration)
Application:Result%20Processing int DisplayResults= 0 1 0 1 // display results of copy/free spelling (boolean)
Application:Sequencing int NumberOfSequences= 10 15 1 % // number of sequences in a set of intensifications
Application:Speller%20Targets matrix TargetDefinitions= 49 { Display Enter Display%20Size Icon%20File Sound%20File } _ A 1 % % _ B 1 % % _ C 1 % % _ D 1 % % _ E 1 % % _ F 1 % % _ G 1 % % _ H 1 % % _ I 1 % % _ J 1 % % _ K 1 % % _ L 1 % % _ M 1 % % _ N 1 % % _ O 1 % % _ P 1 % % _ Q 1 % % _ R 1 % % _ S 1 % % _ T 1 % % _ U 1 % % _ V 1 % % _ W 1 % % _ X 1 % % X X 1 % % _ Z 1 % % _ 1 1 % % _ 2 1 % % _ 3 1 % % _ 4 1 % % _ 5 1 % % _ 6 1 % % _ 7 1 % % _ 8 1 % % _ 9 1 % % _ %20 1 % % _ 1 1 % % _ 2 1 % % _ 3 1 % % _ 4 1 % % _ 5 1 % % _ 6 1 % % _ 7 1 % % _ 8 1 % % _ 9 1 % % _ %20 1 % % _ 8 1 % % _ 9 1 % % _ %20 1 % % // speller target properties
Application:Speller%20Targets intlist NumMatrixColumns= 1 7 6 1 % // display matrices' column number(s)
Application:Speller%20Targets intlist NumMatrixRows= 1 7 6 0 % // display matrices' row number(s)
Application:Audio%20Stimuli int AudioStimuliOn= 0 0 0 1 // Audio Stimuli Mode (0=no, 1=yes) (boolean)
Application:Audio%20Stimuli matrix AudioStimuliRowsFiles= 6 { filename } ./voice/1.wav ./voice/2.wav ./voice/3.wav ./voice/4.wav ./voice/5.wav ./voice/6.wav // audio stimuli rows files 
Application:Audio%20Stimuli matrix AudioStimuliColsFiles= 6 { filename } ./voice/a.wav ./voice/b.wav ./voice/c.wav ./voice/d.wav ./voice/e.wav ./voice/f.wav // audio stimuli column files 
Application:Speller%20Targets floatlist TargetWidth= 1 15 0 0 100 // target width in percent of screen width
Application:Speller%20Targets floatlist TargetHeight= 1 15 0 0 100 // target height in percent of screen height
Application:Speller%20Targets floatlist TargetTextHeight= 1 10 0 0 100 // height of target labels in percent of screen height
Application:Speller%20Targets stringlist BackgroundColor= 1 0xFFFFFF 0x505050 % % // target background color (color)
Application:Speller%20Targets stringlist TextColor= 1 0x444444 0x505050 % % // text color (color)
Application:Speller%20Targets stringlist TextColorIntensified= 1 0xFEFEFE 0x505050 % % // intensified text color (color)
Application:Speller%20Targets intlist IconHighlightMode= 1 1 1 0 2 // icon highlight method 0: Show/Hide, 1: Intensify, 2: Grayscale, 3: Invert, 4: Dim    (enumeration)
Application:Speller%20Targets floatlist IconHighlightFactor= 1 0.5 0.5 0 % // scale factor for highlighted icon pixel values
Application:Speller:P3SpellerTask string TextToSpell= X // character or string to spell in offline copy mode
Application:Audio%20Stimuli:P3SpellerTask int AudioStimuliOn= 0 0 0 1 // Audio Stimuli Mode (0=no, 1=yes) (boolean)
Application:Audio%20Stimuli:P3SpellerTask matrix AudioStimuliRowsFiles= 6 { filename } ./voice/1.wav ./voice/2.wav ./voice/3.wav ./voice/4.wav ./voice/5.wav ./voice/6.wav // audio stimuli rows files 
Application:Audio%20Stimuli:P3SpellerTask matrix AudioStimuliColsFiles= 6 { filename } ./voice/a.wav ./voice/b.wav ./voice/c.wav ./voice/d.wav ./voice/e.wav ./voice/f.wav // audio stimuli column files 
Filtering:Normalizer intlist Adaptation= 2 0 0 0 0 2 // 0: no adaptation, 1: zero mean, 2: zero mean, unit variance (enumeration)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 32 1 2 3 4 5 6 7 8 9 10 11 12 13 14 15 16 17 18 19 20 21 22 23 24 25 26 27 28 29 30 31 32 1 1 % // list of transmitted channels
Filtering:SpatialFilter matrix SpatialFilter= 32 32 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 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0 0 % % // columns represent input channels, rows represent output channels
Application:Speller:P3SpellerTask float StatusBarSize= 0 0 0 100 // size of status bar in percent of screen height
Application:Speller:P3SpellerTask float StatusBarTextHeight= 0 0 0 100 // size of status bar text in percent of screen height
